<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>HarpBehaviorCommands</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HarpBehavior.PortName</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMX</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerHarpReadDump</Name>
      </Expression>
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpBehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputClearPayload">
          <beh:OutputClear>SupplyPort1 SupplyPort2</beh:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateEventEnablePayload">
          <beh:EventEnable>PortDI PortDIO Camera0 Camera1</beh:EventEnable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Valve+Speaker</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
          <beh:OutputPulseEnable>SupplyPort0 DO2</beh:OutputPulseEnable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Photodiode</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePokeInputFilterPayload">
          <beh:PokeInputFilter>1</beh:PokeInputFilter>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpBehaviorCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="11" To="15" Label="Source2" />
      <Edge From="11" To="17" Label="Source2" />
      <Edge From="12" To="18" Label="Source1" />
      <Edge From="13" To="18" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source3" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source4" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>