WorkflowBuilder(Version=2.9.0)
GroupWorkflow OdorControl
    GroupWorkflow OlfactometerInitialConfiguration
        SubscribeSubject HarpOlfactometerEvents
        -> Take(Count=1) => #1
        GroupWorkflow Channel3Setting
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
            #1 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
            #3, #6 -> Merge
            -> WorkflowOutput
        -> PropertyMapping(Channel3Range) => #3
        #1, #3 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3RangePayload(Channel3Range=FlowRate1000))
        -> MulticastSubject HarpOlfactometerCommands
        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableEventsPayload(EnableEvents="Flowmeter DI0Trigger ChannelActualFlow"))
        -> MulticastSubject HarpOlfactometerCommands
        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
        -> MulticastSubject HarpOlfactometerCommands
        -> WorkflowOutput

        GroupWorkflow Channel3Setting
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
            #1 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
            #3, #6 -> Merge
            -> WorkflowOutput
        -> Equal(Operand=WorkflowProperty<Harp.Olfactometer.Channel3RangeConfig>(Value=FlowRate1000))
        -> Condition => #13
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject HarpOlfactometerEvents
        -> Take(Count=1) => #15
        #13, #15 -> Zip
        -> AllenNeuralDynamics.HarpUtils.CreateOdorMix
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=1000
        -> MulticastSubject SetOdorMix

    GroupWorkflow ArmOdor
        BehaviorSubject<AindVrForagingDataSchema.OdorSpecification> ArmOdor

        SubscribeSubject ArmOdor
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ArmOdor)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject ArmOdor
        -> MemberSelector(Selector="Index,Concentration") => #5
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
        -> PropertyMapping(Channel3AsCarrier) => #8
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.TargetOdorFlow)
        -> PropertyMapping(TargetOdorFlow) => #11
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.TargetTotalFlow)
        -> PropertyMapping(TotalFlow) => #14
        #5, #8, #11, #14 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix
          channel3AsCarrier=false
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=0
          Channel3AsCarrier=false
          TargetOdorFlow=100
          TotalFlow=1000
        -> MulticastSubject SetOdorMix

    GroupWorkflow EndValveControl
        SubscribeSubject HarpOlfactometerEvents
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> BehaviorSubject OdorEndValveState

        SubscribeSubject OdorEndValveState => #4
        -> Condition OdorPath
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
        #4 -> BitwiseNot
        -> Condition CarrierPath
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
        #6, #9 -> Merge
        -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
        -> MulticastSubject HarpOlfactometerCommands

    BehaviorSubject<AllenNeuralDynamics.HarpUtils.OdorMixMessages> SetOdorMix
    -> SelectMany SetChannelsTargetFlow
        WorkflowInput Source1
        -> AsyncSubject Mix

        SubscribeSubject Mix
        -> MemberSelector(Selector=ChannelsTargetFlow)
        -> MulticastSubject HarpOlfactometerCommands

        SubscribeSubject HarpOlfactometerEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #6
        SubscribeSubject Mix
        -> MemberSelector(Selector=ChannelsTargetFlow)
        -> MemberSelector(Selector=Address)
        -> PropertyMapping(Address) => #10
        #6, #10 -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=nil))
        -> Unit => #12
        Bonsai.Shaders.Timer(DueTime=PT0.01S)
        -> Unit => #14
        #12, #14 -> Merge
        -> Take(Count=1) => #16
        SubscribeSubject Mix => #17
        #16, #17 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> SelectMany SetOdorValveState
        WorkflowInput Source1
        -> AsyncSubject Mix

        SubscribeSubject Mix
        -> MemberSelector(Selector=OdorValveState)
        -> MulticastSubject HarpOlfactometerCommands

        SubscribeSubject HarpOlfactometerEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #6
        SubscribeSubject Mix
        -> MemberSelector(Selector=OdorValveState)
        -> MemberSelector(Selector=Address)
        -> PropertyMapping(Address) => #10
        #6, #10 -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=nil))
        -> Unit => #12
        Bonsai.Shaders.Timer(DueTime=PT0.01S)
        -> Unit => #14
        #12, #14 -> Merge
        -> Take(Count=1) => #16
        SubscribeSubject Mix => #17
        #16, #17 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput

GroupWorkflow RewardControl
    GroupWorkflow WaterValve
        BehaviorSubject<System.Double> ValveOpenTimeMs
        -> SelectMany SetValue
            WorkflowInput Source1
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands => #2
            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.PulseSupplyPort0) => #4
            #2, #4 -> Zip
            -> IntProperty(Value=0) => #6
            Bonsai.Shaders.Timer(DueTime=PT0.01S)
            -> IntProperty(Value=0) => #8
            #6, #8 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject TriggerValve

        BehaviorSubject<System.Reactive.Unit> TriggerValve
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
        -> MulticastSubject HarpBehaviorCommands
        -> WorkflowOutput

    BonVision.OptionalFloatProperty(Value=0, HasValue=true)
    -> Take(Count=1)
    -> BehaviorSubject GiveReward
    -> BehaviorSubject ForceGiveReward

    SubscribeSubject GiveReward
    -> PublishSubject HotGiveReward

    SubscribeSubject GiveReward => #7
    Annotation ManualReward(Text="This is just to allow differential logging of manual rewards")
    -> SubscribeSubject ForceGiveReward => #9
    #7, #9 -> Merge
    -> Condition HasValue
        WorkflowInput Source1
        -> MemberSelector(Selector=HasValue)
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Condition GreaterThan0 => #13
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Calibration.WaterValve) => #15
    #13, #15 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #17
      Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
    Annotation ToMilliseconds(Text="") => #18
    #17, #18 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> InputMapping(Value(Selector=it))
    -> IntProperty(Value=0)
    -> Condition GreaterThan0
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MulticastSubject ValveOpenTimeMs

    SubscribeSubject GiveReward
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject ForceGiveReward
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ForceGiveReward)
    -> MulticastSubject SoftwareEvent

GroupWorkflow MovableSpoutControl
    Annotation "Start with the spout at max distance"(Text="Start with the spout at max distance")
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject SpoutAvailable

    SubscribeSubject SpoutAvailable => #4
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
    -> MemberSelector(Selector=Enabled) => #7
    #4, #7 -> WithLatestFrom
    -> Condition IsEnabled
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> MemberSelector(Selector=Item1) => #10
    SubscribeSubject SpoutParkingPositions => #11
    #10, #11 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform GetPosition
      Expression: it.Item1 ? it.Item2.ResetPosition : it.Item2.RetractedPosition
    -> MulticastSubject MoveTo

    GroupWorkflow InitialState => #15
        SubscribeSubject ManipulatorPosition
        -> Take(Count=1) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=SpoutAxis)
        -> PropertyMapping(Axis) => #5
        #1, #5 -> SelectMany CalculateRetractedPosition => #6
            ExternalizedMapping(Value(DisplayName=Axis))
            -> PropertySource<AllenNeuralDynamics.AindManipulator.AxisConfiguration,AllenNeuralDynamics.AindManipulator.Axis>(MemberName=Axis, Value=Y1)
            -> Take(Count=1)
            -> AsyncSubject SpoutAxis

            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject SpoutResetPosition

            SubscribeSubject SpoutResetPosition => #7
            Unit
            -> Take(Count=1)
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0) => #10
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=RetractingDistance) => #13
            #10, #13 -> Zip => #14
            SubscribeSubject SpoutAxis
            -> PropertyMapping(Axis) => #16
            #14, #16 -> ModifyManipulatorPosition(Axis=None) => #17
            #7, #17 -> Zip
            -> Subtract
            -> Take(Count=1)
            -> WorkflowOutput
        #1, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression: new(Item1 as ResetPosition, Item2 as RetractedPosition)
        -> AsyncSubject SpoutParkingPositions

        SubscribeSubject SpoutParkingPositions
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SpoutParkingPositions)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled)
        -> BitwiseNot
        -> MulticastSubject SpoutAvailable

        SubscribeSubject GiveReward
        -> BooleanProperty(Value=false) => #19
        SubscribeSubject SpoutAvailable
        -> Condition Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #22
        #19, #22 -> Merge
        -> CreateObservable DelayWithdraw
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject State

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=TimeToCollectAfterReward)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #8
            SubscribeSubject State => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Switch
        -> Condition IsWithdraw?
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> MulticastSubject SpoutAvailable => #27
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled)
        -> Condition => #31
            WorkflowInput Source1
            -> WorkflowOutput
        #27, #31 -> SubscribeWhen
    SubscribeSubject StartExperiment
    -> Bonsai.Shaders.SampleOnRenderFrame => #17
    #15, #17 -> SubscribeWhen

GroupWorkflow FeedbackControl
    BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

    SubscribeSubject ChoiceFeedback
    -> PublishSubject HotChoiceFeedback

    SubscribeSubject ChoiceFeedback
    -> Unit
    -> MulticastSubject AudioTrigger
    -> WorkflowOutput

    SubscribeSubject ChoiceFeedback
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ChoiceFeedback)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject HarpBehaviorEvents
    -> Take(Count=1)
    -> BooleanProperty(Value=true)
    -> MulticastSubject SpoutAvailable

GroupWorkflow Lickometer
    SubscribeSubject HarpLickometerEvents
    -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
    -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
    -> DistinctUntilChanged => #5
    #5, #1 -> WithLatestFrom
    -> Condition IsLickOnset
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject LickEvent

    SubscribeSubject HarpLickometerEvents
    -> Bonsai.Harp.CreateMessage
      MessageType=Write
      Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
    -> Take(Count=1)
    -> MulticastSubject HarpLickometerCommands

GroupWorkflow CameraControl
    SubscribeSubject HarpBehaviorEvents
    -> Take(Count=1) => #1
    SubscribeSubject TextureBank => #2
    SubscribeSubject TriggeredCamerasReady => #3
    #1, #2, #3 -> Zip
    -> Take(Count=1)
    -> Bonsai.Shaders.Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject CameraState

    BehaviorSubject<System.Boolean> CameraState => #9
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #11
    #9 -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #14
    #11, #14 -> Merge
    -> MulticastSubject HarpBehaviorCommands

    SubscribeSubject StartLogging
    -> Take(Count=1)
    -> BooleanProperty(Value=false)
    -> MulticastSubject CameraState

    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true)
    -> MulticastSubject CameraState

    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false)
    -> MulticastSubject CameraState

GroupWorkflow Thermistor/Pressure
    SubscribeSubject HarpSniffDetectorEvents
    -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage) => #1
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpSniffDetector)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #4
    #1, #4 -> SubscribeWhen
    -> PublishSubject ThermistorData

GroupWorkflow Treadmill
    SubscribeSubject StartLogging
    -> SelectMany ClearCurrentLimit
        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S) => #0
        ExternalizedMapping(Count(DisplayName=RetryCount)) => #1
        #0, #1 -> Take(Count=5)
        -> ElementIndex
        -> Sink ThrowOnRetryCount
            WorkflowInput Source1
            -> Last
            -> AllenNeuralDynamics.Core.ThrowException(Message="Number of attempts ot clear the current limit state register has been exceeded.")
            -> WorkflowOutput
        -> AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateTorqueLimitStatePayload(TorqueLimitState=0))
        -> MulticastSubject HarpTreadmillCommands => #6
        SubscribeSubject HarpTreadmillEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write)
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TorqueLimitState)
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> Condition => #11
            WorkflowInput Source1
            -> WorkflowOutput
        #6, #11 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Take(Count=1)
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject TreadmillFriction

    SubscribeSubject HarpTreadmillEvents
    -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.SensorDataDispatchRate)
    -> BehaviorSubject TreadmillSamplingRate

    GroupWorkflow DetermineTreadmillScaling
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill.Calibration) => #1
        -> MemberSelector(Selector=WheelDiameter)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #3
          Expression: it * Math.Pi
        #1 -> MemberSelector(Selector=PulsesPerRevolution) => #4
        #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #6
          Expression: Item1 / Item2
        #1 -> MemberSelector(Selector=InvertDirection) => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2 ? -1.0 * Item1 : Item1
        -> WorkflowOutput
    -> AsyncSubject TreadmillScaling

    SubscribeSubject HarpTreadmillEvents
    -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedSensorData) => #12
    -> Skip(Count=1) => #13
    #13, #12 -> Zip => #14
    -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateDisplacement => #15
      Expression: single(Item1.Value.Encoder - Item2.Value.Encoder)
    SubscribeSubject TreadmillScaling
    -> PropertyMapping(RangeMax) => #17
    #15, #17 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #18
    #18, #14 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateInstantSpeed => #20
      Expression:
        new(
        Item1 as Displacement,
        (Item1 / single(Item2.Item1.Seconds - Item2.Item2.Seconds)) as InstantVelocity
        )
    #14 -> MemberSelector(Selector=Item1.Seconds) => #21
    #20, #21 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject EncoderSample

    SubscribeSubject TreadmillFriction
    -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Clamp)
    -> DistinctUntilChanged => #27
    GroupWorkflow GetInterpolator
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill.Calibration)
        -> MemberSelector(Selector=BrakeLookupCalibration)
        -> Merge => #3
        -> Index(Operand=IntProperty(Value=0)) => #4
        #3 -> Index(Operand=IntProperty(Value=1)) => #5
        #4, #5 -> Zip
        -> ToList
        -> Bonsai.Numerics.Interpolation.CreateLinear
        -> WorkflowOutput
    -> PropertyMapping(Interpolation) => #29
    #27, #29 -> Bonsai.Numerics.Interpolation.Interpolate
    -> AllenNeuralDynamics.Treadmill.Format(MessageType=Write, Register=AllenNeuralDynamics.Treadmill.BrakeCurrentSetPoint)
    -> CreateObservable SendMessage
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject HarpMessage

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedTorque) => #4
        SubscribeSubject HarpMessage => #5
        ExternalizedMapping(DueTime(DisplayName=RetryTimeout))
        -> Bonsai.Shaders.Timer(DueTime=PT0.1S, Period=PT0.1S) => #7
        SubscribeSubject HarpMessage => #8
        #7, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #10
        #5, #10 -> Merge
        -> MulticastSubject HarpTreadmillCommands => #12
        #4, #12 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Switch

    SubscribeSubject EncoderSample => #34
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=InstantVelocity) => #36
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl)
    -> MemberSelector(Selector=PositionControl.FrequencyFilterCutoff)
    -> PropertyMapping(Cutoff1) => #40
    SubscribeSubject TreadmillSamplingRate
    -> PropertyMapping(SampleRate) => #42
    #36, #40, #42 -> Bonsai.Dsp.FrequencyFilter(SampleRate=250, Cutoff1=5, Cutoff2=0, KernelLength=60, FilterType=LowPass) => #43
    #34 -> MemberSelector(Selector=Seconds) => #44
    #43, #44 -> WithLatestFrom
    -> MulticastSubject FilteredCurrentVelocity

GroupWorkflow AudioControl
    BehaviorSubject<System.Double> AudioDuration
    -> Multiply(Operand=IntProperty(Value=1000))
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
    -> MulticastSubject HarpBehaviorCommands

    BehaviorSubject<System.Int32> AudioFrequency
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO2)
    -> MulticastSubject HarpBehaviorCommands

    BehaviorSubject<System.Reactive.Unit> AudioTrigger
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
    -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow InitialSettings => #10
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=50))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.AudioControl)
        -> MemberSelector(Selector=Duration)
        -> MulticastSubject AudioDuration

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.AudioControl)
        -> MemberSelector(Selector=Frequency)
        -> MulticastSubject AudioFrequency
    SubscribeSubject HarpBehaviorEvents
    -> Take(Count=1) => #12
    #10, #12 -> SubscribeWhen
