<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:AindVrForagingDataSchema;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:PatchState">
        <rx:Name>PatchState</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PatchState</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>GlobalPatchState</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentBlock</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GetPatches</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EnvironmentStatistics</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Patches</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>StateIndex</rx:KeySelector>
              <rx:ElementSelector>it</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PatchStatistics</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RngSeed</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Random" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreatePatchManager" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PatchManager</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>ConvertToList</scr:Name>
        <scr:Expression>it.ConvertToList()</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>PatchState</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Double,sys:Int32,p2:PatchUpdateFunction,p2:PatchUpdateFunction,p2:PatchUpdateFunction)">
        <rx:Name>UpdatePatchStates</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PatchManager</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2,Item1.Item1,Item1.Item2,Item1.Item3,Item1.Item4,Item1.Item5</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RngSeed</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Random" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UpdatePatchManager" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>PatchState</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PatchStatistics</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>PatchDynamics</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisPatch</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisPatchIndex</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>InsidePatch</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActivePatch</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPatch</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActiveSite</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:IsInsidePatchFunction" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>IsActive</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsActive</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>GenerateTick</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPatch</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardSpecification</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardFunction</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="p2:MatchRewardFunction">
                          <p2:Type xsi:type="TypeMapping" TypeArguments="p2:PatchRewardFunction" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OnChoice</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Rule</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:PatchRewardFunctionRule">
                                  <Value>OnChoice</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnChoice</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HotChoiceFeedback</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="6" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OnReward</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Rule</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:PatchRewardFunctionRule">
                                  <Value>OnReward</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnReward</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HotGiveReward</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>HasValue</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>HasValue</Selector>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="7" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OnTime</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Rule</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:PatchRewardFunctionRule">
                                  <Value>OnTime</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnTime</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:RenderFrame" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TimeStep</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>ElapsedRealTime</Selector>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RefreshEnvironmentRate</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Period" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT0S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Sample" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="10" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source2" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="13" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                              <Edge From="13" To="14" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OnDistance</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Rule</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="OnDistance" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:PatchRewardFunctionRule">
                                  <Value>OnReward</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnDistance</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CurrentPosition</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Value.Z</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RefreshEnvironmentRate</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Period" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT0S</gl:DueTime>
                                  <gl:Period>PT1S</gl:Period>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Sample" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Abs" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="8" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="12" Label="Source1" />
                              <Edge From="11" To="12" Label="Source2" />
                              <Edge From="12" To="13" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OnChoiceAccumulated</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Rule</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:PatchRewardFunctionRule">
                                  <Value>OnChoiceAccumulated</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnChoiceAccumulated</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HotChoiceFeedback</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="7" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OnRewardAccumulated</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Rule</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p2:PatchRewardFunctionRule">
                                  <Value>OnRewardAccumulated</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnRewardAccumulated</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HotGiveReward</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>HasValue</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>HasValue</Selector>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="8" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>IsActive</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPatch</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.StateIndex</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="6" To="9" Label="Source1" />
                        <Edge From="6" To="11" Label="Source1" />
                        <Edge From="6" To="13" Label="Source1" />
                        <Edge From="6" To="15" Label="Source1" />
                        <Edge From="6" To="17" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="19" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="19" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="19" Label="Source3" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="19" Label="Source4" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="19" Label="Source5" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source6" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="24" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source2" />
                        <Edge From="24" To="27" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source2" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>OutsidePatch</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActivePatch</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPatch</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActiveSite</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:IsOutsideRewardFunction" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>IsActive</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsActive</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>GenerateTick</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPatch</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardSpecification</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardFunction</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="p2:MatchRewardFunction">
                          <p2:Type xsi:type="TypeMapping" TypeArguments="p2:OutsideRewardFunction" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OnTime</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Rule</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="StringProperty">
                                  <Value>OnTime</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnTime</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateFrame" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TimeStep</Selector>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>ElapsedRealTime</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Delay</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p3:TimeSpanFromSeconds" />
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Delay">
                                  <gl:DueTime>PT0S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:Accumulate" />
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RefreshEnvironmentRate</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Period" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT0S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Sample" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>IsActive</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:TakeUntil" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="10" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source2" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="15" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="20" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source2" />
                              <Edge From="20" To="22" Label="Source1" />
                              <Edge From="21" To="22" Label="Source2" />
                              <Edge From="22" To="23" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>IsActive</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPatch</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.StateIndex</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="13" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="16" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>OnThisPatchEntry</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActivePatch</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPatch</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.StateIndex,Item2.StateIndex</Selector>
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>IsActive</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IsActive</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>GenerateTick</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPatch</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardSpecification</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RewardFunction</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="p2:MatchRewardFunction">
                          <p2:Type xsi:type="TypeMapping" TypeArguments="p2:OnThisPatchEntryFunction" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>OnThisPatchEntryFunction</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Rule</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="StringProperty">
                                  <Value>OnThisPatchEntryFunction</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnThisPatchEntryFunction</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardFunction</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="5" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>IsActive</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPatch</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.StateIndex</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.Item1,Item2,Item1.Item2.Amount,Item1.Item2.Probability,Item1.Item2.Available</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="13" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="16" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="8" Label="Source2" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>UpdatePatchStates</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>