<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AindVrForagingDataSchema;assembly=Extensions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.Distributions;assembly=AllenNeuralDynamics.AindBehaviorServices.Distributions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>BlockTransitionLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BlockStructure</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlockStructure</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Blocks</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Blocks</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BlockStructure</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RandomizeBlocks</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Random</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>SamplingMode</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p1:BlockStructureSamplingMode">
                            <Value>Random</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Blocks</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RngSeed</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Permutation" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Sequential</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>SamplingMode</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p1:BlockStructureSamplingMode">
                            <Value>Sequential</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Blocks</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>BlockTransitionLogic</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisBlock</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>EndConditions</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="p1:MatchBlockEndCondition">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:BlockEndConditionDuration" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OnDuration</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>EntryTime</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EvaluateBlockEndConditions</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EntryTime</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RngSeed</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="RandomSource" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:SampleDistribution" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Item1 - Item2 &gt;= Item3</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="11" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="19" Label="Source1" />
                        <Edge From="13" To="19" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="18" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source2" />
                        <Edge From="18" To="19" Label="Source3" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p1:MatchBlockEndCondition">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:BlockEndConditionDistance" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OnDistance</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentPosition</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Z</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>EntryPosition</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EvaluateBlockEndConditions</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentPosition</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Z</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EntryPosition</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RngSeed</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="RandomSource" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:SampleDistribution" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>Item1 - Item2 &gt;= Item3</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="13" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="21" Label="Source1" />
                        <Edge From="15" To="21" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="20" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source2" />
                        <Edge From="20" To="21" Label="Source3" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p1:MatchBlockEndCondition">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:BlockEndConditionReward" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OnReward</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EvaluateBlockEndConditions</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>GiveReward</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>IsValid?</scr:Name>
                          <scr:Expression>it.HasValue ? 1.0 : 0.0</scr:Expression>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RngSeed</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="RandomSource" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:SampleDistribution" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="GreaterThanOrEqual" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="14" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="12" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p1:MatchBlockEndCondition">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:BlockEndConditionChoice" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OnChoice</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EvaluateBlockEndConditions</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HotChoiceFeedback</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ElementIndex" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Index</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RngSeed</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="RandomSource" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:SampleDistribution" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="GreaterThanOrEqual" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="14" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="12" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p1:MatchBlockEndCondition">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:BlockEndConditionPatchCount" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>OnPatchCount</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>EvaluateBlockEndConditions</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ActivePatch</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ElementIndex" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Index</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>This</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RngSeed</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="RandomSource" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:SampleDistribution" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="GreaterThanOrEqual" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="14" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="12" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="11" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>Ensure sequence never ends</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="24" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="6" To="11" Label="Source1" />
                  <Edge From="6" To="13" Label="Source1" />
                  <Edge From="6" To="15" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="17" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="17" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="17" Label="Source3" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source4" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source5" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
        <rx:Name>EvaluateBlockEndConditions</rx:Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>