WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindVrForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindVrForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindVrForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.Calibration)
        -> Defer LoadDisplayCalibration
            WorkflowInput Source1
            -> AsyncSubject calibration

            SubscribeSubject calibration
            -> MemberSelector(Selector=Left)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #4
            SubscribeSubject calibration
            -> MemberSelector(Selector=Center)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #7
            SubscribeSubject calibration
            -> MemberSelector(Selector=Right)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #10
            #4, #7, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Left,
                Item2 as Center,
                Item3 as Right)
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject DisplayCalibration

        GroupWorkflow RenderLoop
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(FarClip)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderLoop.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0))

            IncludeWorkflow(Path=AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai, Minimum=2, Maximum=6)

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject WorldContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Contrast) => #9
            SubscribeSubject WorldContrast => #10
            #9, #10 -> CombineLatest
            -> Multiply
            -> MulticastSubject DisplayContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Brightness)
            -> MulticastSubject DisplayBrightness

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadTextureBank.bonsai, Path=Textures, SearchPattern=*.jpg)
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        SubscribeSubject HarpWhiteRabbitEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.WhiteRabbit.Parse(Register=AllenNeuralDynamics.WhiteRabbit.TimestampedCounter)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject HarpTimestampSource

        SubscribeSubject HarpWhiteRabbitEvents
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
        -> PublishSubject HarpWhiteRabbitHeartbeat

        Disable SubscribeSubject RigSchema
        -> Disable MemberSelector(Selector=HarpOlfactometer.PortName)
        -> Disable PropertyMapping(PortName)
        -> Disable IncludeWorkflow
          Path=AllenNeuralDynamics.HarpUtils:HarpOlfactometerDevice.bonsai
          PortName=COM6
          TriggerHarpReadDumpSubjectName=TriggerHarpReadDump
          Channel3AsCarrier=true

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometer) => #13
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometerExtension)
        -> Merge => #16
        #13, #16 -> Merge
        -> GroupWorkflow HarpOlfactometerExtensionManager
            WorkflowInput Source1
            -> ElementIndex
            -> CreateObservable InstantiateOlfactometer
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject thisOlfactometer

                SubscribeSubject OlfactometerHubCommandsGroupedBy => #3
                SubscribeSubject thisOlfactometer
                -> MemberSelector(Selector=Index) => #5
                #3, #5 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionCondition isThisOlfactometer?
                  Expression: it.Item1.Key == it.Item2
                -> Take(Count=1)
                -> MemberSelector(Selector=Item1)
                -> Merge
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject thisHarpOlfactometerCommands

                SubscribeSubject thisHarpOlfactometerEvents => #13
                SubscribeSubject thisOlfactometer
                -> MemberSelector(Selector=Index) => #15
                #13, #15 -> WithLatestFrom
                -> MemberSelector(Selector="Item2,Item1")
                -> MulticastSubject OlfactometerHubEvents

                BehaviorSubject<Bonsai.Harp.HarpMessage> thisHarpOlfactometerCommands => #19
                SubscribeSubject thisOlfactometer
                -> MemberSelector(Selector=Value.PortName)
                -> PropertyMapping(PortName) => #22
                #19, #22 -> Harp.Olfactometer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM6)
                -> PublishSubject thisHarpOlfactometerEvents

                ExternalizedMapping(Name(DisplayName=TriggerHarpReadDumpSubjectName))
                -> SubscribeSubject TriggerHarpReadDump
                -> Bonsai.Harp.CreateMessage
                  MessageType=Write
                  Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
                -> MulticastSubject thisHarpOlfactometerCommands

                SubscribeSubject thisHarpOlfactometerEvents
                -> Take(Count=1) => #30
                SubscribeSubject thisOlfactometer
                -> MemberSelector(Selector=Index) => #32
                PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #33
                PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #34
                #32, #33, #34 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 == 0 ? it.Item2 : it.Item3
                -> PropertyMapping(Channel3Range) => #37
                #30, #37 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3RangePayload(Channel3Range=FlowRate1000))
                -> MulticastSubject thisHarpOlfactometerCommands
                -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableEventsPayload(EnableEvents="Flowmeter DI0Trigger ChannelActualFlow"))
                -> MulticastSubject thisHarpOlfactometerCommands
                -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
                -> MulticastSubject thisHarpOlfactometerCommands
                -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableValvePulsePayload(EnableValvePulse=None))
                -> MulticastSubject thisHarpOlfactometerCommands
            -> Merge

            Annotation MultiplexIO(Text="") => #4
            -> BehaviorSubject<System.Tuple(System.Int32,Bonsai.Harp.HarpMessage)> OlfactometerHubCommands
            -> GroupBy(KeySelector=Item1)
            -> ReplaySubject OlfactometerHubCommandsGroupedBy(BufferSize=nil)
            BehaviorSubject<System.Tuple(System.Int32,Bonsai.Harp.HarpMessage)> OlfactometerHubEvents
            -> GroupBy(KeySelector=Item1) => #9
            #9, #4 -> ReplaySubject OlfactometerHubEventsGroupedBy(BufferSize=nil)

            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpOlfactometerCommands => #11
            -> IntProperty(Value=0) => #12
            Annotation BackwardsCompatible(Text=BackwardsCompatible) => #13
            #12, #11, #13 -> Zip
            -> MulticastSubject OlfactometerHubCommands => #15
            IntProperty(Value=0) => #16
            #15, #16 -> Zip

            SubscribeSubject OlfactometerHubEventsGroupedBy
            -> Bonsai.Scripting.Expressions.ExpressionCondition "it.Key == 0"
              Expression: it.Key == 0
            -> Take(Count=1)
            -> Merge
            -> MemberSelector(Selector=Item2) => #22
            Annotation BackwardsCompatible(Text=BackwardsCompatible) => #23
            #22, #23 -> PublishSubject HarpOlfactometerEvents

        IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTreadmill.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration) => #35
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #39
        #35, #39 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpSniffDetector.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #44
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #47
        #44, #47 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #52
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #55
        #52, #55 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpEnvironmentSensor.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #60
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #63
        #60, #63 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #13
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #17
                WorkflowInput Source1
                -> WorkflowOutput
            #17, #13 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #24
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                  Gamma(Selector=Gamma)
                  PixelFormat(Selector=PixelFormat)
                  AdcBitDepth(Selector=AdcBitDepth)
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=RegionOfInterest)
                -> InputMapping(Value(Selector="X,Y,Width,Height"))
                -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
                -> PropertyMapping(RegionOfInterest) => #14
                #5, #8, #14 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #15
                  Index=nil
                  ColorProcessing=Default
                  ExposureTime=19000
                  Gain=0
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=nil
                SubscribeSubject FrameEvent => #16
                #15, #16 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #18
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #20
                #18, #20 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #26
            #24, #26 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1) => #33
            IntProperty(Value=0)
            -> Take(Count=1) => #35
            #33, #35 -> Merge
            -> Accumulate => #37
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #41
            #37, #41 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #23
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #24
    #23, #24 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

    Unit => #28
    ExternalizedMapping(Value(DisplayName=RefreshEnvironmentRate)) => #29
    #28, #29 -> TimeSpanProperty(Value=PT0.1S)
    -> Take(Count=1)
    -> AsyncSubject RefreshEnvironmentRate

    SubscribeSubject SubjectSchema
    -> PropertyMapping(SessionName(Selector=SessionName)) => #34
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=DataDirectory)
    -> PropertyMapping(RootFolder) => #37
    #34, #37 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.Patch> GlobalActivePatch
    BehaviorSubject<AindVrForagingDataSchema.VirtualSite> GlobalActiveSite
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> UpdaterEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    BehaviorSubject<PatchState> GlobalPatchState
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GlobalPatchState)
    -> MulticastSubject SoftwareEvent

    GroupWorkflow Position
        BehaviorSubject<Bonsai.Harp.Timestamped(OpenTK.Vector3)> CurrentPosition
        BehaviorSubject<Bonsai.Harp.Timestamped(System.Boolean)> IsStopped
        BehaviorSubject<OpenTK.Vector3> MaxPosition
        BehaviorSubject<System.Double> StopVelocityThreshold
        BehaviorSubject<System.Tuple(System.Double,System.Double)> FilteredCurrentVelocity

    BooleanProperty(Value=false)
    -> Take(Count=1) => #14
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #17
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #20
    #14, #17, #20 -> Merge
    -> BehaviorSubject ExperimentState

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

Defer HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        GroupWorkflow Olfactometer
            Disable SubscribeSubject TaskLogicParameters
            -> Disable MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
            -> Disable Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable SelectMany SampleFlow
                SubscribeSubject StartExperiment
                -> Take(Count=1) => #1
                SubscribeSubject HarpOlfactometerEvents
                -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
                -> MemberSelector(Selector=Value) => #4
                ExternalizedMapping(Value(DisplayName=LowFlowThreshold)) => #5
                #4, #5 -> LessThan(Operand=FloatProperty(Value=950)) => #6
                #6, #4 -> Zip => #7
                #1, #7 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Disable Take(Count=1)
            -> Disable Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> Disable MemberSelector(Selector=Item2)
            -> Disable Format(Format="Flow on Channel3 is lower than expected. Reading {0}.", Selector=it)
            -> Disable InputMapping(Selector=it, Message(Selector=it)) => #8
            Annotation TODO(Text="") => #9
            #8, #9 -> Disable AllenNeuralDynamics.Core.ThrowException(Message="Flow on Channel3 is lower than expected.")

            SubscribeSubject TaskLogicSchema => #11
            SubscribeSubject RigSchema => #12
            #11, #12 -> Zip
            -> Take(Count=1)
            -> ValidateOlfactometerDefinition

        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")

            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=Timestamp)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #8
                #4 -> MemberSelector(Selector=Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #10
                #8, #10 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #13
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #14
                #13, #14 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT10S) => #19
                #17, #19 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation)
            -> Merge

        GroupWorkflow Treadmill => #11
            SubscribeSubject HarpTreadmillEvents
            -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TorqueLimitState)
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.Design.MessageBox
              Text="The treadmill current limit has been triggered. If this is a problem, please restart the session."
              Title="Treadmill limit trigger"
              MessageBoxIcon=Exclamation
        SubscribeSubject StartExperiment => #12
        #11, #12 -> SubscribeWhen

        IncludeWorkflow(Path=Extensions\ValidateClkOutput.bonsai)
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #8
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #10
#8, #10 -> TakeUntil => #11
SubscribeSubject StartLogging => #12
#11, #12 -> SubscribeWhen

Annotation(Text="")
-> IncludeWorkflow(Path=Extensions\OperationControl.bonsai)

Defer TaskLogic => #16
    IncludeWorkflow(Path=Extensions\CorridorFactory.bonsai, CorridorLength=120, CorridorWidth=40, CorridorHeight=30)
    IncludeWorkflow(Path=Extensions\PositionControl.bonsai)

    Annotation(Text="")
    -> IncludeWorkflow(Path=Extensions\VariableUpdaters.bonsai)

    Defer PatchStateMachine
        BehaviorSubject<AindVrForagingDataSchema.Block> CurrentBlock
        BehaviorSubject<AindVrForagingDataSchema.Patch> ActivePatch

        SubscribeSubject ActivePatch
        -> MulticastSubject GlobalActivePatch

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=Environment)
        -> AsyncSubject Blocks

        SubscribeSubject Blocks
        -> IncludeWorkflow(Path=Extensions\SolveBlockTransitions.bonsai) => #8
        Annotation "Updates asynch"(Text="") => #9
        #8, #9 -> MulticastSubject CurrentBlock
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Block)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject CurrentBlock
        -> MemberSelector(Selector=EnvironmentStatistics.TransitionMatrix)
        -> FormatTransitionMatrix(NormalizeRows=true)
        -> BehaviorSubject TransitionMatrix

        SubscribeSubject CurrentBlock
        -> CreateObservable WithinBlockLogic
            SubscribeSubject CurrentBlock
            -> MemberSelector(Selector=EnvironmentStatistics.FirstStateOccupancy) => #1
            SubscribeSubject TransitionMatrix => #2
            #1, #2 -> Zip => #3
            SubscribeSubject RngSeed
            -> PropertyMapping(Random) => #5
            #3, #5 -> DrawFirstState
            -> Take(Count=1)
            -> BehaviorSubject ActiveStateIndex

            IncludeWorkflow(Path=Extensions\PatchManagement.bonsai)
            BehaviorSubject<AindVrForagingDataSchema.VirtualSite> ActiveSite

            SubscribeSubject ActiveSite
            -> MulticastSubject GlobalActiveSite

            SubscribeSubject ActiveStateIndex
            -> SelectMany UpdatePatch
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject idx

                SubscribeSubject PatchStatistics => #3
                SubscribeSubject idx
                -> PropertyMapping(Value) => #5
                #3, #5 -> Index(Operand=IntProperty(Value=0))
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject ActivePatch

            SubscribeSubject ActivePatch
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ActivePatch)
            -> MulticastSubject SoftwareEvent

            BehaviorSubject<AindVrForagingDataSchema.VirtualSite> SiteSpecs
            -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
            -> Merge

            Bonsai.Shaders.Timer(DueTime=PT0S)
            -> Take(Count=1) => #23
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=PatchVirtualSitesGenerator.InterPatch)
            -> PropertyMapping => #26
              Label(Selector=Label)
              Contrast(Selector=RenderSpecification.Contrast)
              LengthDistribution(Selector=LengthDistribution)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #23, #26 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai, Contrast=nil, Label=Unspecified)
            -> SelectMany Patch => #28
                WorkflowInput Source1
                -> Take(Count=1)
                -> BehaviorSubject EntrySite

                SubscribeSubject EntrySite
                -> Take(Count=1) => #4
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.InterSite)
                -> PropertyMapping => #7
                  LengthDistribution(Selector=LengthDistribution)
                  Contrast(Selector=RenderSpecification.Contrast)
                  Label(Selector=Label)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #4, #7 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Contrast=nil, Label=Unspecified)
                -> BehaviorSubject FirstPatchSite

                BooleanProperty(Value=false)
                -> Take(Count=1)
                -> BehaviorSubject IsTerminated

                BehaviorSubject<System.Boolean> SiteHasChoice

                Defer PatchTerminationLogic
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=PatchTerminators)
                    -> Merge => #2
                    -> AindVrForagingDataSchema.MatchPatchTerminator(Type=TypeMapping<AindVrForagingDataSchema.PatchTerminatorOnRejection>)
                    -> CreateObservable PatchTerminatorOnRejection => #4
                        WorkflowInput Source1
                        -> AsyncSubject terminator

                        SubscribeSubject SiteHasChoice
                        -> BitwiseNot
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> IntProperty(Value=1)
                        -> Accumulate => #6
                        SubscribeSubject terminator
                        -> MemberSelector(Selector=Count) => #8
                        SubscribeSubject RngSeed
                        -> PropertyMapping(RandomSource) => #10
                        #8, #10 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                        -> PropertyMapping(Value) => #12
                        #6, #12 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
                        -> Condition => #14
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject terminator
                        -> AindVrForagingDataSchema.MatchPatchTerminator => #16
                        #14, #16 -> WithLatestFrom
                        -> WorkflowOutput
                    #2 -> AindVrForagingDataSchema.MatchPatchTerminator(Type=TypeMapping<AindVrForagingDataSchema.PatchTerminatorOnReward>)
                    -> CreateObservable PatchTerminatorOnReward => #6
                        WorkflowInput Source1
                        -> AsyncSubject terminator

                        SubscribeSubject HotGiveReward
                        -> IntProperty(Value=1)
                        -> Accumulate => #4
                        SubscribeSubject terminator
                        -> MemberSelector(Selector=Count) => #6
                        SubscribeSubject RngSeed
                        -> PropertyMapping(RandomSource) => #8
                        #6, #8 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                        -> PropertyMapping(Value) => #10
                        #4, #10 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
                        -> Condition => #12
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject terminator
                        -> AindVrForagingDataSchema.MatchPatchTerminator => #14
                        #12, #14 -> WithLatestFrom
                        -> WorkflowOutput
                    #2 -> AindVrForagingDataSchema.MatchPatchTerminator(Type=TypeMapping<AindVrForagingDataSchema.PatchTerminatorOnChoice>)
                    -> CreateObservable PatchTerminatorOnChoice => #8
                        WorkflowInput Source1
                        -> AsyncSubject terminator

                        SubscribeSubject HotChoiceFeedback
                        -> IntProperty(Value=1)
                        -> Accumulate => #4
                        SubscribeSubject terminator
                        -> MemberSelector(Selector=Count) => #6
                        SubscribeSubject RngSeed
                        -> PropertyMapping(RandomSource) => #8
                        #6, #8 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                        -> PropertyMapping(Value) => #10
                        #4, #10 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
                        -> Condition => #12
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject terminator
                        -> AindVrForagingDataSchema.MatchPatchTerminator => #14
                        #12, #14 -> WithLatestFrom
                        -> WorkflowOutput
                    #2 -> AindVrForagingDataSchema.MatchPatchTerminator(Type=TypeMapping<AindVrForagingDataSchema.PatchTerminatorOnTime>)
                    -> CreateObservable PatchTerminatorOnTime => #10
                        WorkflowInput Source1
                        -> AsyncSubject terminator

                        Bonsai.Shaders.RenderFrame
                        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                        -> Accumulate => #4
                        SubscribeSubject terminator
                        -> MemberSelector(Selector=Count) => #6
                        SubscribeSubject RngSeed
                        -> PropertyMapping(RandomSource) => #8
                        #6, #8 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution
                        -> PropertyMapping(Value) => #10
                        #4, #10 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
                        -> Condition => #12
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject terminator
                        -> AindVrForagingDataSchema.MatchPatchTerminator => #14
                        #12, #14 -> WithLatestFrom
                        -> WorkflowOutput
                    #4, #6, #8, #10 -> Merge
                    -> Merge
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item1)
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:PublishSoftwareEvent.bonsai, EventName=PatchTerminationEvent)
                    -> MemberSelector(Selector=Item1)
                    -> WorkflowOutput
                -> MulticastSubject IsTerminated

                SubscribeSubject FirstPatchSite
                -> Take(Count=1)
                -> Condition NotIsTerminated => #18
                    WorkflowInput Source1 => #0
                    SubscribeSubject IsTerminated => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.RewardSite)
                -> PropertyMapping => #21
                  LengthDistribution(Selector=LengthDistribution)
                  Contrast(Selector=RenderSpecification.Contrast)
                  Label(Selector=Label)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #18, #21 -> IncludeWorkflow(Path=Extensions\AddRewardSite.bonsai, Contrast=nil, Label=Unspecified) => #22
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.InterSite)
                -> PropertyMapping => #25
                  LengthDistribution(Selector=LengthDistribution)
                  Contrast(Selector=RenderSpecification.Contrast)
                  Label(Selector=Label)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #22, #25 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Contrast=nil, Label=Unspecified)
                -> SelectMany WaitForSiteOutcome => #27
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject PreviousSite

                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value)
                    -> MemberSelector(Selector=Z) => #5
                    SubscribeSubject PreviousSite
                    -> MemberSelector(Selector="Length,StartPosition")
                    -> Add => #8
                    #5, #8 -> CombineLatest
                    -> GreaterThan
                    -> Condition => #11
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject PreviousSite => #12
                    BooleanProperty(Value=false)
                    -> Take(Count=1) => #14
                    SubscribeSubject HotChoiceFeedback
                    -> BooleanProperty(Value=true) => #16
                    #14, #16 -> Merge => #17
                    #11, #12, #17 -> CombineLatest
                    -> Take(Count=1)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        it.Item2 as PreviousSite,
                        it.Item3 as SiteHasChoice)
                    -> WorkflowOutput
                -> MemberSelector(Selector=PreviousSite)
                -> MulticastSubject FirstPatchSite => #29
                #27 -> MemberSelector(Selector=SiteHasChoice)
                -> MulticastSubject SiteHasChoice => #31
                #29, #31 -> Zip
                -> MemberSelector(Selector=Item1)
                -> Take(Count=1)
                -> Repeat
                -> Condition IsTerminated
                    WorkflowInput Source1 => #0
                    SubscribeSubject IsTerminated => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            -> Condition HasPostPatch
                WorkflowInput Source1 => #0
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.PostPatch)
                -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull
                  Expression: it == null
                -> BitwiseNot => #4
                #0, #4 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> SelectMany PostPatchLogic => #30
                WorkflowInput Source1 => #0
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.PostPatch)
                -> PropertyMapping => #3
                  Label(Selector=Label)
                  Contrast(Selector=RenderSpecification.Contrast)
                  LengthDistribution(Selector=LengthDistribution)
                  TreadmillSpecification(Selector=TreadmillSpecification)
                #0, #3 -> IncludeWorkflow(Path=Extensions\AddPostPatchSite.bonsai, Contrast=nil, Label=Unspecified)
                -> SelectMany WaitForSiteOutcome
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject PreviousSite

                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value)
                    -> MemberSelector(Selector=Z) => #5
                    SubscribeSubject PreviousSite
                    -> MemberSelector(Selector="Length,StartPosition")
                    -> Add => #8
                    #5, #8 -> CombineLatest
                    -> GreaterThan
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1) => #12
                    SubscribeSubject PreviousSite => #13
                    #12, #13 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> WorkflowOutput
            #28 -> Condition HasNotPostPatch => #31
                WorkflowInput Source1 => #0
                SubscribeSubject ActivePatch
                -> MemberSelector(Selector=PatchVirtualSitesGenerator.PostPatch)
                -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull => #3
                  Expression: it == null
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            #30, #31 -> Merge
            -> Unit
            -> MulticastSubject EvaluateBlockEndConditions
            -> SelectMany SampleFromTransitionMatrix
                SubscribeSubject TransitionMatrix => #0
                SubscribeSubject ActiveStateIndex => #1
                #0, #1 -> Zip => #2
                SubscribeSubject RngSeed
                -> PropertyMapping(Random) => #4
                #2, #4 -> DrawFromTransitionMatrix
                -> MulticastSubject ActiveStateIndex
                -> Take(Count=1)
                -> WorkflowOutput
            -> Repeat
        -> Switch
SubscribeSubject EndExperiment => #17
#16, #17 -> TakeUntil => #18
SubscribeSubject StartExperiment => #19
#18, #19 -> SubscribeWhen

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    SubscribeSubject TriggeredCamerasReady => #2
    #0, #1, #2 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #6
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #7
    #6, #7 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\Visualizers.bonsai)

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    AllenNeuralDynamics.HarpUtils.CreateOdorMix
      channel3AsCarrier=true
      PercentageChannel0=0
      PercentageChannel1=0
      PercentageChannel2=0
      PercentageChannel3=NaN
      Channel3AsCarrier=true
      TargetOdorFlow=100
      TotalFlow=1000
    -> MulticastSubject SetOdorMix
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState => #3
    AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateBrakeCurrentSetPointPayload(BrakeCurrentSetPoint=0))
    -> Take(Count=1)
    -> MulticastSubject HarpTreadmillCommands => #6
    Defer ZeroYAxis => #7
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=AxisConfiguration)
        -> Merge
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Axis) => #1
            -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1)) => #2
            #1 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y2)) => #3
            #2, #3 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> SelectMany ZeroAxis
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject axisConfiguration

            SubscribeSubject axisConfiguration
            -> MemberSelector(Selector=Axis)
            -> Bonsai.Scripting.Expressions.ExpressionTransform OffsetRegister85
              Expression: it + 85
            -> Take(Count=1)
            -> AsyncSubject TargetRegister

            SubscribeSubject TargetRegister
            -> PropertyMapping(Address)
            -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=0, PayloadType=S32, Value=0))
            -> MulticastSubject StepperDriverCommands
            -> Take(Count=1)
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    #3, #6, #7 -> Zip
    -> Take(Count=1) => #9
    AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateBrakeCurrentSetPointPayload(BrakeCurrentSetPoint=0))
    -> Take(Count=1)
    -> MulticastSubject HarpTreadmillCommands => #12
    #9, #12 -> Zip
    -> WorkflowOutput
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
