WorkflowBuilder(Version=2.8.2)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindVrForagingDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindVrForagingDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Rig.AindVrForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindVrForagingDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.AindVrForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation PinOut
  Text:
    | Function | HarpBehavior Pin | Notes |
    | --- | ----------- | ----------- |
    | Camera Trigger | DO0 |  |
    | Water Valve | Port0 Supply |  Use a poke breakout |
    | Lickometer | Port0 DI |  Use a poke breakout |
    | Encoder B | Port2 DIO | Use a poke breakout |
    | Encoder A | Port2 DI | Use a poke breakout |
    | Thermistor | ADC0 |  |
    | Pressure Sensor | ADC1 |  |
    | Photodiode | DI3 |  |
    | Servo Motor | DO2 |  |
    | Audio Buzzer | DO1 |  |
-> IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, StartExperimentSubjectName=StartExperiment)

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.CalibrationDirectory)
        -> PropertyMapping(Directory)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadDisplayCalibration.bonsai, Directory=Calibration\Monitors)
        -> Take(Count=1)
        -> AsyncSubject ScreenCalibration

        GroupWorkflow RenderLoop
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(FarClip)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderLoop.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0))

            IncludeWorkflow(Path=AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai, Minimum=2, Maximum=6)

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject WorldContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Contrast) => #9
            SubscribeSubject WorldContrast => #10
            #9, #10 -> CombineLatest
            -> Multiply
            -> MulticastSubject DisplayContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Brightness)
            -> MulticastSubject DisplayBrightness

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadTextureBank.bonsai, Path=Textures, SearchPattern=*.jpg)
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpOlfactometerDevice.bonsai, PortName=COM6, StartExperimentSubjectName=StartExperiment, Channel3AsCarrier=true)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTreadmill.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input) => #20
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #24
        #20, #24 -> IncludeWorkflow
          Path=Extensions\AindManipulator.bonsai
          OperationMode=Active
          OperationLed=On
          DumpRegisters=false
          VisualIndicators=On
          Heartbeat=Enabled
          IgnoreErrors=false
          PortName=COMx

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpSniffDetector.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment) => #29
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #32
        #29, #32 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment) => #37
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #40
        #37, #40 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockRepeaters)
        -> Merge
        -> CreateObservable CreateRepeaters
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ThisHarp

            BehaviorSubject<Bonsai.Harp.HarpMessage> ThisHarpClockGenCommands => #3
            SubscribeSubject ThisHarp
            -> MemberSelector(Selector=PortName)
            -> PropertyMapping(PortName) => #6
            #3, #6 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COMx)
            -> PublishSubject ThisHarpClockGenEvents

            SubscribeSubject ThisHarpClockGenEvents
            -> Harp.TimestampGeneratorGen3.Parse(Register=Harp.TimestampGeneratorGen3.RepeaterStatus)
            -> HasFlag(Operand=WorkflowProperty<Harp.TimestampGeneratorGen3.RepeaterFlags>(Value=Repeater))
            -> BehaviorSubject RepeaterRegisterStatus

            SubscribeSubject RepeaterRegisterStatus
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.TimestampGeneratorGen3.CreateMessage(MessageType=Write, Payload=Harp.TimestampGeneratorGen3.CreateRepeaterStatusPayload(RepeaterStatus=Repeater))
            -> MulticastSubject ThisHarpClockGenCommands

            SubscribeSubject RepeaterRegisterStatus
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> Merge
        -> IntProperty(Value=1)
        -> Accumulate
        -> BehaviorSubject InstantiatedRepeaters

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                #5, #8 -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1, Gamma=nil, PixelFormat=Mono8) => #9
                SubscribeSubject FrameEvent => #10
                #9, #10 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #12
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #14
                #12, #14 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

SubscribeSubject HarpBehaviorEvents
-> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
-> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
-> BehaviorSubject HarpTimestampSource

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #23
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #24
    #23, #24 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai, RootFolder=C:\data\, Subject=672102, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> ActiveSite
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    BooleanProperty(Value=false)
    -> Take(Count=1) => #8
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #11
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #14
    #8, #11, #14 -> Merge
    -> BehaviorSubject ExperimentState

GroupWorkflow HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=EnvironmentStatistics.Patches)
        -> MemberSelector(Selector=Count) => #11
        SubscribeSubject TransitionMatrix
        -> MemberSelector(Selector=Rows) => #13
        #11, #13 -> Zip
        -> NotEqual
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> AllenNeuralDynamics.Core.ThrowException(Message="Number of patches does not match transition matrix size.")

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany SampleFlow
            SubscribeSubject StartExperiment
            -> Take(Count=1) => #1
            SubscribeSubject HarpOlfactometerEvents
            -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
            -> MemberSelector(Selector=Value) => #4
            ExternalizedMapping(Value(DisplayName=LowFlowThreshold)) => #5
            #4, #5 -> LessThan(Operand=FloatProperty(Value=950)) => #6
            #6, #4 -> Zip => #7
            #1, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Format(Format="Flow on Channel3 is lower than expected. Reading {0}.", Selector=it)
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException(Message="Flow on Channel3 is lower than expected.")

        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")

            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=Timestamp)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #8
                #4 -> MemberSelector(Selector=Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #10
                #8, #10 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #13
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #14
                #13, #14 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT10S) => #19
                #17, #19 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation)
            -> Merge

        SubscribeSubject InstantiatedRepeaters => #30
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockRepeaters.Count) => #32
        #30, #32 -> Zip => #33
        SubscribeSubject StartExperiment => #34
        #33, #34 -> SubscribeWhen => #35
        -> Equal
        -> BitwiseNot => #37
        #37, #35 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Format(Format="Unexpected number of instantiated Harp Clock Generators. Expected: {1}, got: {0}", Selector="Item1,Item2")
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException(Message="")
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

Annotation Defer(Text="Defer just to keep the variable polution a bit more contained")
-> Defer Logging => #15
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.GroupByRegister => #1
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Behavior.harp
              Extension=bin
              HarpDevice=Behavior
            -> PropertyMapping(FileName) => #5
            #1, #5 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpOlfactometerEvents
            -> Bonsai.Harp.GroupByRegister => #8
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Olfactometer.harp
              Extension=bin
              HarpDevice=Olfactometer
            -> PropertyMapping(FileName) => #12
            #8, #12 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpLickometerEvents
            -> Bonsai.Harp.GroupByRegister => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Lickometer.harp
              Extension=bin
              HarpDevice=LicketySplit
            -> PropertyMapping(FileName) => #19
            #15, #19 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpTreadmillEvents
            -> Bonsai.Harp.GroupByRegister => #22
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=Treadmill.harp
              Extension=bin
              HarpDevice=Treadmill
            -> PropertyMapping(FileName) => #26
            #22, #26 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpSniffDetectorEvents
            -> Bonsai.Harp.GroupByRegister => #29
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=SniffDetector.harp
              Extension=bin
              HarpDevice=SniffDetector
            -> PropertyMapping(FileName) => #33
            #29, #33 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpClockGenEvents
            -> Bonsai.Harp.GroupByRegister => #36
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=ClockGenerator.harp
              Extension=bin
              HarpDevice=TimestampGeneratorGen3
            -> PropertyMapping(FileName) => #40
            #36, #40 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpAnalogInputEvents
            -> Bonsai.Harp.GroupByRegister => #43
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=AnalogInput.harp
              Extension=bin
              HarpDevice=AnalogInput
            -> PropertyMapping(FileName) => #47
            #43, #47 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpTimestampSource
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpBehaviorCommands => #3
            SubscribeSubject HarpSeconds => #4
            #3, #4 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Behavior.harp
              Extension=bin
              HarpDevice=Behavior
            -> PropertyMapping(FileName) => #11
            #7, #11 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpOlfactometerCommands => #13
            SubscribeSubject HarpSeconds => #14
            #13, #14 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #17
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Olfactometer.harp
              Extension=bin
              HarpDevice=Olfactometer
            -> PropertyMapping(FileName) => #21
            #17, #21 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpLickometerCommands => #23
            SubscribeSubject HarpSeconds => #24
            #23, #24 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #27
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Lickometer.harp
              Extension=bin
              HarpDevice=LicketySplit
            -> PropertyMapping(FileName) => #31
            #27, #31 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpTreadmillCommands => #33
            SubscribeSubject HarpSeconds => #34
            #33, #34 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #37
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/Treadmill.harp
              Extension=bin
              HarpDevice=Treadmill
            -> PropertyMapping(FileName) => #41
            #37, #41 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpSniffDetectorCommands => #43
            SubscribeSubject HarpSeconds => #44
            #43, #44 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> AllenNeuralDynamics.SniffDetector.GroupByRegister => #47
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/SniffDetector.harp
              Extension=bin
              HarpDevice=HarpDevice
            -> PropertyMapping(FileName) => #51
            #47, #51 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpClockGenCommands => #53
            SubscribeSubject HarpSeconds => #54
            #53, #54 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #57
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/ClockGenerator.harp
              Extension=bin
              HarpDevice=TimestampGeneratorGen3
            -> PropertyMapping(FileName) => #61
            #57, #61 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

            SubscribeSubject HarpAnalogInputCommands => #63
            SubscribeSubject HarpSeconds => #64
            #63, #64 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> Bonsai.Harp.GroupByRegister => #67
            SubscribeSubject Modality
            -> PropertyMapping(Modality)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=HarpCommands/AnalogInput.harp
              Extension=bin
              HarpDevice=AnalogInput
            -> PropertyMapping(FileName) => #71
            #67, #71 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        GroupWorkflow Render
            SubscribeSubject RendererSynchState
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #1
              Expression:
                new(
                it.FrameIndex.Value as FrameIndex,
                it.FrameTimestamp.Value as FrameTimestamp,
                it.SynchQuadValue.Value as SynchQuadValue)
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogCsv.bonsai
              LogName=RendererSynchState
              DeviceName=Renderer
              Extension=csv
              OmitHeader=false
              Delimiter=nil
              SubjectName=LoggingRootPath
              Modality=nil

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvent
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #5
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #10
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #12
            #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            SubscribeSubject UpdaterEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #20
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #22
            #20, #22 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #25
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #27
            #25, #27 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject Annotations
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=Annotations)
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #31
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #33
            #31, #33 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #35
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #37
            #35, #37 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #40
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #42
            #40, #42 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath, Modality=nil)

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> MemberSelector(Selector=Head)
                -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvent

        GroupWorkflow OperationControl
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector="Seconds,Value.Z")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Position)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogCsv.bonsai
                  LogName=CurrentPosition
                  DeviceName=OperationControl
                  Extension=csv
                  OmitHeader=false
                  Delimiter=nil
                  SubjectName=LoggingRootPath
                  Modality=nil
                -> WorkflowOutput

            SubscribeSubject IsStopped
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Seconds as Seconds,
                Value as IsStopped)
            -> Defer LogCsv
                WorkflowInput Source1 => #0
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #2
                #0, #2 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogCsv.bonsai
                  LogName=IsStopped
                  DeviceName=OperationControl
                  Extension=csv
                  OmitHeader=false
                  Delimiter=nil
                  SubjectName=LoggingRootPath
                  Modality=nil
                -> WorkflowOutput

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow TriggeredCameras
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #2
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindVrForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindVrForagingDataSchema.Rig.VideoWriterFfmpeg>) => #5
            #2 -> MemberSelector(Selector=Key) => #6
            #5, #6 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=OutputArguments)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
                -> MemberSelector(Selector=Value.Image) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #34
                #32, #34 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #12
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindVrForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindVrForagingDataSchema.Rig.VideoWriterOpenCv>) => #15
            #12 -> MemberSelector(Selector=Key) => #16
            #15, #16 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FourCc)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
                -> MemberSelector(Selector=Value.Image) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), FourCC(Selector=Logger.Codec)) => #34
                #32, #34 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #3
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindVrForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindVrForagingDataSchema.Rig.VideoWriterFfmpeg>) => #6
            #3 -> MemberSelector(Selector=Key) => #7
            #6, #7 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=OutputArguments)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector=Seconds)
                -> MemberSelector(Selector=Value) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), OutputArguments(Selector=Logger.Codec)) => #34
                #32, #34 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #14
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindVrForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindVrForagingDataSchema.Rig.VideoWriterOpenCv>) => #17
            #14 -> MemberSelector(Selector=Key) => #18
            #17, #18 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FrameRate)
                -> PropertyMapping(EncodingFrameRate) => #11
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #13
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #16
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=FourCc)
                -> PropertyMapping(Codec) => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                #11, #13, #16, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=nil
                  LogName=FaceCamera
                  EncodingFrameRate=60
                  VideoExtension=mp4
                  MetadataExtension=csv
                  Codec="-c:v h264_nvenc -vsync 0 -2pass 1 -bf:v 0 -qp 13-preset medium -b:v 20M -rc:v cbr"
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #27
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #30
                #27, #30 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector=Seconds)
                -> MemberSelector(Selector=Value) => #32
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), FourCC(Selector=Logger.Codec)) => #34
                #32, #34 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

    Defer Other
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.Logging.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Logging.Modality)>(MemberName=Modality, Value=Other)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow ConfigSchemaLogging
            SubscribeSubject SubjectSchema
            -> AindVrForagingDataSchema.Session.SerializeToJson => #1
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=session_output
              DeviceName=Config
              Extension=json

            SubscribeSubject TaskLogicSchema
            -> AindVrForagingDataSchema.TaskLogic.SerializeToJson => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai
              SubjectName=LoggingRootPath
              Modality=nil
              LogName=tasklogic_output
              DeviceName=Config
              Extension=json

            SubscribeSubject RigSchema
            -> AindVrForagingDataSchema.Rig.SerializeToJson => #11
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #13
            #11, #13 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=rig_output, DeviceName=Config, Extension=json)

            SubscribeSubject RawRigSchema => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #17
            #15, #17 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=rig_input, DeviceName=Config, Extension=json)

            SubscribeSubject RawSessionSchema => #19
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #21
            #19, #21 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=session_input, DeviceName=Config, Extension=json)

            SubscribeSubject RawTaskLogicSchema => #23
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #25
            #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=tasklogic_input, DeviceName=Config, Extension=json)

        GroupWorkflow Logs
            SubscribeSubject EndExperiment
            -> StringProperty(Value=ExperimentCompleted)
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
            SubscribeSubject HarpTimestampSource => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
            -> AllenNeuralDynamics.Core.Logging.SerializeToJson => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #9
            #7, #9 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=endsession, DeviceName="", Extension=json)

            SubscribeSubject RuntimeLogging
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #12
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
            #12, #14 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #16
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent => #21
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #23
            #21, #23 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=RuntimeLogging, SubjectName=LoggingRootPath, Modality=nil)
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
#15, #17 -> TakeUntil => #18
SubscribeSubject StartLogging => #19
#18, #19 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow PositionControl => #0
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=PositionControl.VelocityThreshold)
        -> BehaviorSubject StopVelocityThreshold

        SubscribeSubject StopVelocityThreshold
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=StopVelocityTreshold)
        -> MulticastSubject SoftwareEvent

        GroupWorkflow InitialPosition => #7
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl)
            -> MemberSelector(Selector=PositionControl.InitialPosition)
            -> MemberSelector(Selector=Z) => #3
            -> DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject EncoderData => #8
        #7, #8 -> Concat => #9
        -> MemberSelector(Selector=Value)
        -> Accumulate
        -> InputMapping(Z(Selector=it)) => #12
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.PositionControl.InitialPosition)
        -> PropertyMapping(X(Selector=X), Y(Selector=Y)) => #15
        #12, #15 -> Bonsai.Shaders.CreateVector3(X=0, Y=4, Z=-1) => #16
        #9 -> MemberSelector(Selector=Seconds) => #17
        #16, #17 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject CurrentPosition

        SubscribeSubject EncoderData => #22
        -> MemberSelector(Selector=Value) => #23
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=PositionControl.FrequencyFilterCutoff)
        -> PropertyMapping(Cutoff1) => #27
        #23, #27 -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=5, Cutoff2=0, KernelLength=60, FilterType=LowPass)
        -> Bonsai.Scripting.Expressions.ExpressionTransform cm/second
          Expression: it * 1000
        -> PublishSubject CurrentVelocity => #30
        SubscribeSubject StopVelocityThreshold
        -> PropertyMapping(Value) => #32
        #30, #32 -> LessThan(Operand=DoubleProperty(Value=10))
        -> DistinctUntilChanged => #34
        #22 -> MemberSelector(Selector=Seconds) => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject IsStopped

        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value) => #41
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-100000)
        -> Take(Count=1) => #43
        #41, #43 -> Scan => #44
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #45
        #44, #45 -> BehaviorSubject MaxPosition
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen

    GroupWorkflow PatchStatistics => #3
        BehaviorSubject<AindVrForagingDataSchema.TaskLogic.PatchStatistics> ActivePatch
        BehaviorSubject<System.Single> PatchRewardAvailable
        BehaviorSubject<System.Single> PatchRewardAmount
        BehaviorSubject<System.Single> PatchRewardProbability
        BehaviorSubject<System.Double> DepletionVariable

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=EnvironmentStatistics.TransitionMatrix)
        -> MemberSelector(Selector=Data)
        -> FormatTransitionMatrix(NormalizeRows=true)
        -> BehaviorSubject TransitionMatrix

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=EnvironmentStatistics.Patches)
        -> Merge
        -> ToDictionary(KeySelector=StateIndex, ElementSelector=it)
        -> Take(Count=1)
        -> AsyncSubject PatchStatistics

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=EnvironmentStatistics.FirstState) => #17
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #19
        #17 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany RandomStart => #21
            SubscribeSubject RngSeed => #0
            SubscribeSubject TransitionMatrix
            -> MemberSelector(Selector=Rows)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Upper) => #4
            #0, #4 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> WorkflowOutput
        #19, #21 -> Merge
        -> Take(Count=1)
        -> BehaviorSubject ActiveStateIndex

        SubscribeSubject ActiveStateIndex
        -> CreateObservable UpdateState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject PatchIndex

            FloatProperty(Value=0)
            -> Take(Count=1)
            -> MulticastSubject DepletionVariable

            SubscribeSubject PatchStatistics => #6
            SubscribeSubject PatchIndex
            -> PropertyMapping(Value) => #8
            #6, #8 -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject ThisPatch

            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=RewardSpecification)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it != null
            -> Take(Count=1)
            -> AsyncSubject HasRewardSpec

            GroupWorkflow DetermineDepletionRule => #17
                SubscribeSubject ThisPatch
                -> Take(Count=1)
                -> MemberSelector(Selector=RewardSpecification.RewardFunction.DepletionRule) => #2
                -> Condition OnChoice
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=OnChoice))
                    -> WorkflowOutput
                -> CreateObservable OnChoice => #4
                    SubscribeSubject HotChoiceFeedback
                    -> IntProperty(Value=1)
                    -> Subtract(Operand=IntProperty(Value=1))
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: single(it)
                    -> WorkflowOutput
                #2 -> Condition OnReward
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=OnReward))
                    -> WorkflowOutput
                -> CreateObservable OnReward => #6
                    SubscribeSubject HotGiveReward
                    -> Condition HasValue
                        WorkflowInput Source1
                        -> MemberSelector(Selector=HasValue)
                        -> WorkflowOutput
                    -> IntProperty(Value=1)
                    -> Accumulate
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: single(it)
                    -> WorkflowOutput
                #2 -> Condition OnTime
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=OnTime))
                    -> WorkflowOutput
                -> CreateObservable OnTime => #8
                    Bonsai.Shaders.UpdateFrame
                    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                    -> Accumulate => #2
                    ExternalizedMapping(Period(DisplayName=UpdatePeriod))
                    -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #4
                    #2, #4 -> Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: single(it)
                    -> WorkflowOutput
                #2 -> Condition OnDistance
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskLogic.DepletionRule>(Value=OnDistance))
                    -> WorkflowOutput
                -> CreateObservable OnDistance => #10
                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value.Z) => #1
                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value.Z)
                    -> Take(Count=1) => #4
                    #1, #4 -> CombineLatest
                    -> Subtract => #6
                    ExternalizedMapping(Period(DisplayName=UpdatePeriod))
                    -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S) => #8
                    #6, #8 -> Sample
                    -> WorkflowOutput
                #4, #6, #8, #10 -> Merge
                -> Switch
                -> MulticastSubject DepletionVariable
            SubscribeSubject HasRewardSpec
            -> Condition => #19
                WorkflowInput Source1
                -> WorkflowOutput
            #17, #19 -> SubscribeWhen => #20
            GroupWorkflow DefaultTo0 => #21
                SubscribeSubject HasRewardSpec
                -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> FloatProperty(Value=0)
                -> MulticastSubject DepletionVariable
                -> Unit
                -> WorkflowOutput
            #20, #21 -> Concat

            GroupWorkflow DetermineRewardSpecs => #23
                SubscribeSubject DepletionVariable => #0
                SubscribeSubject ThisPatch
                -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                -> MemberSelector(Selector=Available) => #3
                #0, #3 -> WithLatestFrom
                -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                -> MulticastSubject PatchRewardAvailable

                SubscribeSubject DepletionVariable => #7
                SubscribeSubject ThisPatch
                -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                -> MemberSelector(Selector=Amount) => #10
                #7, #10 -> WithLatestFrom
                -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                -> MulticastSubject PatchRewardAmount

                SubscribeSubject DepletionVariable => #14
                SubscribeSubject ThisPatch
                -> MemberSelector(Selector=RewardSpecification.RewardFunction)
                -> MemberSelector(Selector=Probability) => #17
                #14, #17 -> WithLatestFrom
                -> AindVrForagingDataSchema.TaskLogic.ApplyRewardFunction(Clamp=true, Value=0)
                -> MulticastSubject PatchRewardProbability
            SubscribeSubject HasRewardSpec
            -> Condition => #25
                WorkflowInput Source1
                -> WorkflowOutput
            #23, #25 -> SubscribeWhen => #26
            GroupWorkflow DefaultTo0 => #27
                SubscribeSubject HasRewardSpec
                -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> FloatProperty(Value=0)
                -> MulticastSubject PatchRewardAvailable
                -> MulticastSubject PatchRewardAmount
                -> MulticastSubject PatchRewardProbability
                -> Unit
                -> WorkflowOutput
            #26, #27 -> Concat

            SubscribeSubject ThisPatch
            -> MulticastSubject ActivePatch

            SubscribeSubject DepletionVariable
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=DepletionVariable)
            -> MulticastSubject SoftwareEvent
        -> Switch

        SubscribeSubject ActivePatch
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ActivePatch)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject PatchRewardAvailable
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=PatchRewardAvailable)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject PatchRewardAmount
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=PatchRewardAmount)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject PatchRewardProbability
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=PatchRewardProbability)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject DepletionVariable
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=DepletionVariable)
        -> MulticastSubject SoftwareEvent
    SubscribeSubject StartExperiment => #4
    #3, #4 -> SubscribeWhen

    GroupWorkflow OdorControl
        GroupWorkflow OlfactometerInitialConfiguration
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #1
            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Channel3Range) => #3
            #1, #3 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3RangePayload(Channel3Range=FlowRate1000))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableEventsPayload(EnableEvents="Flowmeter DI0Trigger ChannelActualFlow"))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
            -> MulticastSubject HarpOlfactometerCommands
            -> WorkflowOutput

            GroupWorkflow Channel3Setting
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier) => #1
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate1000) => #3
                #1 -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> PropertySource<Harp.Olfactometer.CreateChannel3RangePayload,Harp.Olfactometer.Channel3RangeConfig>(MemberName=Channel3Range, Value=FlowRate100) => #6
                #3, #6 -> Merge
                -> WorkflowOutput
            -> Equal(Operand=WorkflowProperty<Harp.Olfactometer.Channel3RangeConfig>(Value=FlowRate1000))
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1) => #15
            #13, #15 -> Zip
            -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #17
              channel3AsCarrier=true
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=NaN
              Channel3AsCarrier=true
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #18
            #17 -> MemberSelector(Selector=OdorValveState) => #19
            #18, #19 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow ArmOdor
            BehaviorSubject<AindVrForagingDataSchema.TaskLogic.OdorSpecification> ArmOdor

            SubscribeSubject ArmOdor
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ArmOdor)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject ArmOdor
            -> MemberSelector(Selector="Index,Concentration") => #5
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.UseChannel3AsCarrier)
            -> PropertyMapping(Channel3AsCarrier) => #8
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.TargetOdorFlow)
            -> PropertyMapping(TargetOdorFlow) => #11
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.TargetTotalFlow)
            -> PropertyMapping(TotalFlow) => #14
            #5, #8, #11, #14 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #15
              channel3AsCarrier=false
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=0
              Channel3AsCarrier=false
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #16
            #15 -> MemberSelector(Selector=OdorValveState) => #17
            #16, #17 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

            PropertySource<Harp.Olfactometer.CreateDO1SyncPayload,Harp.Olfactometer.DO1SyncConfig>(MemberName=DO1Sync, Value=None)
            -> CreateOdorMix
              channel3AsCarrier=false
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=0
              Channel3AsCarrier=false
              TargetOdorFlow=100
              TotalFlow=1000

        GroupWorkflow EndValveControl
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1)
            -> BooleanProperty(Value=false)
            -> BehaviorSubject OdorEndValveState

            SubscribeSubject OdorEndValveState => #4
            -> Condition OdorPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
            #4 -> BitwiseNot
            -> Condition CarrierPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
            #6, #9 -> Merge
            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow WaitForMaxOpenTime
            SubscribeSubject OdorEndValveState => #0
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.OdorControl.ValveMaxOpenTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(MaxOpenTime) => #4
            #0, #4 -> IncludeWorkflow(Path=Extensions\WaitForMaxOpenTime.bonsai, MaxOpenTime=PT5S)
            -> MulticastSubject OdorEndValveState
            -> WorkflowOutput

    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #9
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #14
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #15
        #14, #15 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #25
        FloatProperty(Value=0) => #26
        #25, #26 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvent

    GroupWorkflow MovableSpoutControl
        Annotation "Start with the spout at max distance"(Text="Start with the spout at max distance")
        -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject SpoutAvailable

        SubscribeSubject StartExperiment => #4
        SubscribeSubject ManipulatorPosition => #5
        #4, #5 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1) => #8
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=AdditionalSettings.SpoutAxis)
        -> PropertyMapping(Axis) => #12
        #8, #12 -> SelectMany CalcRetractedPosition => #13
            ExternalizedMapping(Value(DisplayName=Axis))
            -> PropertySource<AllenNeuralDynamics.AindManipulator.AxisConfiguration,AllenNeuralDynamics.AindManipulator.Axis>(MemberName=Axis, Value=Y1)
            -> Take(Count=1)
            -> AsyncSubject SpoutAxis

            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject SpoutResetPosition

            SubscribeSubject SpoutResetPosition => #7
            Unit
            -> Take(Count=1)
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0) => #10
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=RetractingDistance) => #13
            SubscribeSubject SpoutAxis => #14
            #10, #13, #14 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionSink Assign
              Expression: Item1[Item3] = Item2
            -> MemberSelector(Selector=Item1) => #17
            #7, #17 -> Zip
            -> Subtract
            -> Take(Count=1)
            -> WorkflowOutput
        #8, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression: new(Item1 as ResetPosition, Item2 as RetractedPosition)
        -> AsyncSubject SpoutParkingPositions

        SubscribeSubject SpoutAvailable => #17
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled) => #20
        #17, #20 -> WithLatestFrom
        -> Condition IsEnabled
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #23
        SubscribeSubject SpoutParkingPositions => #24
        #23, #24 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform GetPosition
          Expression: it.Item1 ? it.Item2.ResetPosition : it.Item2.RetractedPosition
        -> MulticastSubject MoveTo
        -> WorkflowOutput

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled)
        -> BitwiseNot
        -> MulticastSubject SpoutAvailable => #33
        SubscribeSubject StartExperiment => #34
        #33, #34 -> SubscribeWhen

        SubscribeSubject GiveReward
        -> BooleanProperty(Value=false) => #37
        SubscribeSubject SpoutAvailable
        -> Condition Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #40
        #37, #40 -> Merge
        -> CreateObservable DelayWithdraw
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject State

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
            -> MemberSelector(Selector=TimeToCollectAfterReward)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0S) => #8
            SubscribeSubject State => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Switch
        -> Condition IsWithdraw?
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> MulticastSubject SpoutAvailable => #45
        SubscribeSubject StartExperiment => #46
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.MovableSpoutControl)
        -> MemberSelector(Selector=Enabled)
        -> Condition => #50
            WorkflowInput Source1
            -> WorkflowOutput
        Annotation "Enabled and Start"(Text="") => #51
        #46, #50, #51 -> Zip => #52
        #45, #52 -> SubscribeWhen

    GroupWorkflow FeedbackControl
        BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> PublishSubject HotChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> Unit
        -> MulticastSubject AudioTrigger
        -> WorkflowOutput

        SubscribeSubject ChoiceFeedback
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ChoiceFeedback)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject SpoutAvailable

    GroupWorkflow Lickometer
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #5, #1 -> WithLatestFrom
        -> PublishSubject LickometerState
        -> Condition IsLickOnset
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> BehaviorSubject LickometerUntriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> BehaviorSubject LickometerTriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> Take(Count=1)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerTriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerUntrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerUntriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #1
        SubscribeSubject TextureBank => #2
        SubscribeSubject TriggeredCamerasReady => #3
        #1, #2, #3 -> Zip
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #9
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #11
        #9 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #14
        #11, #14 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow Thermistor/Pressure
        SubscribeSubject HarpSniffDetectorEvents
        -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #4
        #1, #4 -> SubscribeWhen
        -> PublishSubject ThermistorData

    GroupWorkflow Treadmill
        FloatProperty(Value=0)
        -> Take(Count=1)
        -> BehaviorSubject TreadmillFriction

        GroupWorkflow DetermineTreadmillScaling
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTreadmill.Calibration) => #1
            -> MemberSelector(Selector=WheelDiameter)
            -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #3
              Expression: it * Math.Pi
            #1 -> MemberSelector(Selector=PulsesPerRevolution) => #4
            #3, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #6
              Expression: Item1 / Item2
            #1 -> MemberSelector(Selector=InvertDirection) => #7
            #6, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2 ? -1.0 * Item1 : Item1
            -> WorkflowOutput
        -> AsyncSubject TreadmillScaling

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedSensorData) => #6
        -> Skip(Count=1) => #7
        #7, #6 -> Zip => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateDisplacement => #9
          Expression: (Item1.Value.Encoder - Item2.Value.Encoder)
        SubscribeSubject TreadmillScaling
        -> PropertyMapping(RangeMax) => #11
        #9, #11 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #12
        #8 -> MemberSelector(Selector=Item1.Seconds) => #13
        #12, #13 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject EncoderData

        SubscribeSubject TreadmillFriction
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Clamp)
        -> DistinctUntilChanged => #19
        GroupWorkflow GetInterpolator
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTreadmill.Calibration)
            -> MemberSelector(Selector=BrakeLookupCalibration) => #2
            -> Index(Operand=IntProperty(Value=0))
            -> Merge => #4
            #2 -> Index(Operand=IntProperty(Value=1))
            -> Merge => #6
            #4, #6 -> Zip
            -> ToList
            -> Bonsai.Numerics.Interpolation.CreateLinear
            -> WorkflowOutput
        -> PropertyMapping(Interpolation) => #21
        #19, #21 -> Bonsai.Numerics.Interpolation.Interpolate
        -> AllenNeuralDynamics.Treadmill.Format(MessageType=Write, Register=AllenNeuralDynamics.Treadmill.BreakCurrentSetPoint)
        -> CreateObservable SendMessage
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject HarpMessage

            SubscribeSubject HarpTreadmillEvents
            -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.BreakCurrentSetPoint) => #4
            SubscribeSubject HarpMessage => #5
            ExternalizedMapping(DueTime(DisplayName=RetryTimeout))
            -> Bonsai.Shaders.Timer(DueTime=PT0.1S, Period=PT0.1S) => #7
            SubscribeSubject HarpMessage => #8
            #7, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #10
            #5, #10 -> Merge
            -> MulticastSubject HarpTreadmillCommands => #12
            #4, #12 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.AudioControl)
            -> MemberSelector(Selector=Duration)
            -> MulticastSubject AudioDuration

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl.AudioControl)
            -> MemberSelector(Selector=Frequency)
            -> MulticastSubject AudioFrequency
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow VariableUpdaters
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Updaters)
    -> Take(Count=1)
    -> AsyncSubject VariableUpdaters

    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=true)
    -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=StopDurationOffset, DefaultValue=0)
    -> BehaviorSubject StopDurationOffset
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterStopDurationOffset)
    -> MulticastSubject UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=false) => #12
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.PositionControl.VelocityThreshold)
    -> PropertyMapping(DefaultValue) => #15
    #12, #15 -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=StopVelocityThreshold, DefaultValue=0)
    -> MulticastSubject StopVelocityThreshold
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterStopVelocityThreshold)
    -> MulticastSubject UpdaterEvents

    SubscribeSubject GiveReward
    -> BooleanProperty(Value=true)
    -> IncludeWorkflow(Path=Extensions\UpdateVariable.bonsai, UpdaterKey=RewardDelayOffset, DefaultValue=0)
    -> BehaviorSubject RewardDelayOffset
    -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=UpdaterRewardDelayOffset)
    -> MulticastSubject UpdaterEvents

GroupWorkflow TaskLogic => #25
    Annotation(Text="")
    -> GroupWorkflow ProceduralGeneration
        GroupWorkflow CorridorDrawing
            ExternalizedMapping(Value(DisplayName=CorridorLength))
            -> FloatProperty(Value=120)
            -> Take(Count=1)
            -> AsyncSubject VisualCorridorLength

            ExternalizedMapping(Value(DisplayName=CorridorWidth))
            -> FloatProperty(Value=40)
            -> Take(Count=1)
            -> AsyncSubject CorridorWidth

            ExternalizedMapping(Value(DisplayName=CorridorHeight))
            -> FloatProperty(Value=30)
            -> Take(Count=1)
            -> AsyncSubject CorridorHeight

            GroupWorkflow DefineTextures
                AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
                -> PropertyMapping(Size)
                -> AindVrForagingDataSchema.TaskLogic.Texture(Name=Floor)
                -> PropertyMapping(Floor) => #3
                AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
                -> PropertyMapping(Size)
                -> AindVrForagingDataSchema.TaskLogic.Texture(Name=Ceiling)
                -> PropertyMapping(Ceiling) => #7
                AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
                -> PropertyMapping(Size)
                -> AindVrForagingDataSchema.TaskLogic.Texture(Name=LeftWall)
                -> PropertyMapping(Left) => #11
                AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
                -> PropertyMapping(Size)
                -> AindVrForagingDataSchema.TaskLogic.Texture(Name=RightWall)
                -> PropertyMapping(Right) => #15
                #3, #7, #11, #15 -> AindVrForagingDataSchema.TaskLogic.WallTextures
                -> WorkflowOutput
            -> Take(Count=1)
            -> AsyncSubject TextureDefinition

            Defer Initialize => #15
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=OperationControl.PositionControl.InitialPosition)
                -> MemberSelector(Selector=Z)
                -> Take(Count=1)
                -> AsyncSubject InitPosition

                SubscribeSubject FarClipHorizon => #5
                SubscribeSubject InitPosition => #6
                #5, #6 -> Zip
                -> Subtract => #8
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #10
                #8, #10 -> Divide(Operand=FloatProperty(Value=120))
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Math.Ceiling(it)
                -> Take(Count=1)
                -> SelectMany Range
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject Count

                    SubscribeSubject InitPosition
                    -> Take(Count=1)
                    -> PropertyMapping(Start) => #5
                    SubscribeSubject Count
                    -> PropertyMapping(Count) => #7
                    #5, #7 -> Range(Start=-1, Count=9)
                    -> WorkflowOutput
                -> InputMapping(Value(Selector=it))
                -> DoubleProperty(Value=7)
                -> WorkflowOutput
            GroupWorkflow Update => #16
                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value) => #1
                SubscribeSubject MaxPosition => #2
                #1, #2 -> CombineLatest
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector="Item1.Z,Item2.Z")
                    -> GreaterThanOrEqual
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1.Z) => #5
                SubscribeSubject FarClipHorizon
                -> PropertyMapping(Value) => #7
                #5, #7 -> Add(Operand=FloatProperty(Value=1000)) => #8
                SubscribeSubject SigmaZ
                -> PropertyMapping(Value) => #10
                #8, #10 -> Add(Operand=FloatProperty(Value=0)) => #11
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #13
                #11, #13 -> Divide(Operand=FloatProperty(Value=120))
                -> InputMapping(TypeMapping=TypeMapping<System.Double>)
                -> Bonsai.Numerics.Floor
                -> WorkflowOutput
            #15, #16 -> Concat
            -> DistinctUntilChanged => #18
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Value) => #20
            #18, #20 -> Multiply(Operand=DoubleProperty(Value=120)) => #21
            #18, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Id,
                Item2 as Start
                )
            -> InputMapping(StartPosition(Selector=Start), Id(Selector=Id)) => #24
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Length) => #26
            SubscribeSubject CorridorWidth
            -> PropertyMapping(Width(Selector=it)) => #28
            SubscribeSubject CorridorHeight
            -> PropertyMapping(Height) => #30
            SubscribeSubject TextureDefinition
            -> PropertyMapping(Textures) => #32
            #24, #26, #28, #30, #32 -> IncludeWorkflow(Path=Extensions\CreateCorridorSpecs.bonsai, Height=0, Id=0, Length=120, StartPosition=0, Width=0)
            -> ReplaySubject VisualCorridorSpecs(BufferSize=nil)

            SubscribeSubject VisualCorridorSpecs
            -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
            -> Merge
            -> WorkflowOutput

        GroupWorkflow PatchGeneration
            BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> SiteSpecs

            SubscribeSubject SiteSpecs
            -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
            -> Merge

        SubscribeSubject ActiveSite
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ActiveSite)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject VisualCorridorSpecs
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=VisualCorridorSpecs)
        -> MulticastSubject SoftwareEvent

    Annotation(Text="")
    -> Defer Foraging => #3
        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> Take(Count=1) => #1
        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=VirtualSiteGeneration.InterPatch)
        -> PropertyMapping => #4
          Label(Selector=Label)
          Contrast(Selector=RenderSpecification.Contrast)
          LengthDistribution(Selector=LengthDistribution)
          TreadmillSpecification(Selector=TreadmillSpecification)
        #1, #4 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai)
        -> SelectMany Patch => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject EntrySite

            BooleanProperty(Value=false)
            -> Take(Count=1)
            -> BehaviorSubject HasRefusedLastReward

            SubscribeSubject ChoiceFeedback
            -> BooleanProperty(Value=false)
            -> MulticastSubject HasRefusedLastReward

            SubscribeSubject EntrySite
            -> Take(Count=1) => #10
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> PropertyMapping => #13
              LengthDistribution(Selector=LengthDistribution)
              Contrast(Selector=RenderSpecification.Contrast)
              Label(Selector=Label)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #10, #13 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai)
            -> BehaviorSubject FirstPatchSite

            SubscribeSubject FirstPatchSite
            -> Take(Count=1)
            -> Condition NotHasRefusedLast
                WorkflowInput Source1 => #0
                SubscribeSubject HasRefusedLastReward => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany ResetHasRefusedLast => #19
                BooleanProperty(Value=true)
                -> MulticastSubject HasRefusedLastReward
                -> Take(Count=1) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.RewardSite)
            -> PropertyMapping => #22
              LengthDistribution(Selector=LengthDistribution)
              Contrast(Selector=RenderSpecification.Contrast)
              Label(Selector=Label)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #19, #22 -> IncludeWorkflow(Path=Extensions\AddRewardSite.bonsai) => #23
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.InterSite)
            -> PropertyMapping => #26
              LengthDistribution(Selector=LengthDistribution)
              Contrast(Selector=RenderSpecification.Contrast)
              Label(Selector=Label)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #23, #26 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai)
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Z) => #5
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Length,StartPosition")
                -> Add => #8
                #5, #8 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject PreviousSite => #13
                #12, #13 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MulticastSubject FirstPatchSite
            -> Take(Count=1)
            -> Repeat
            -> Condition HasExited
                SubscribeSubject HasRefusedLastReward
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition HasPostPatch
            WorkflowInput Source1 => #0
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull
              Expression: it == null
            -> BitwiseNot => #4
            #0, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> SelectMany PostPatchLogic => #8
            WorkflowInput Source1 => #0
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
            -> PropertyMapping => #3
              Label(Selector=Label)
              Contrast(Selector=RenderSpecification.Contrast)
              LengthDistribution(Selector=LengthDistribution)
              TreadmillSpecification(Selector=TreadmillSpecification)
            #0, #3 -> IncludeWorkflow(Path=Extensions\AddPostPatchSite.bonsai)
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Z) => #5
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Length,StartPosition")
                -> Add => #8
                #5, #8 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject PreviousSite => #13
                #12, #13 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> WorkflowOutput
        #6 -> Condition HasNotPostPatch => #9
            WorkflowInput Source1 => #0
            SubscribeSubject ActivePatch
            -> MemberSelector(Selector=VirtualSiteGeneration.PostPatch)
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNull => #3
              Expression: it == null
            #0, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        #8, #9 -> Merge
        -> IncludeWorkflow(Path=Extensions\UpdateState.bonsai)
        -> Repeat
    SubscribeSubject TaskLogicParameters
    -> Take(Count=1)
    -> MemberSelector(Selector=TaskModeSettings)
    -> AindVrForagingDataSchema.TaskLogic.MatchTaskModeSettings(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.ForagingSettings>)
    -> Take(Count=1) => #8
    #3, #8 -> SubscribeWhen

    Defer Habituation => #10
        SubscribeSubject TaskLogicParameters
        -> Take(Count=1)
        -> MemberSelector(Selector=TaskModeSettings)
        -> AindVrForagingDataSchema.TaskLogic.MatchTaskModeSettings(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.HabituationSettings>)
        -> AsyncSubject HabituationSettings

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=DistanceToReward)
        -> BehaviorSubject DistanceToRewardAvailable

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=RenderSpecification.Contrast)
        -> Condition HasValue?
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MulticastSubject WorldContrast

        SubscribeSubject ActivePatch
        -> MemberSelector(Selector=RewardSpecification.OperantLogic)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
        -> MemberSelector(Selector=IsOperant)
        -> BehaviorSubject IsOperantMode

        Bonsai.Shaders.Timer(DueTime=PT0S) => #17
        SubscribeSubject DistanceToRewardAvailable
        -> Take(Count=1) => #19
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #21
        #19, #21 -> AindVrForagingDataSchema.TaskLogic.SampleDistribution
        -> PropertyMapping(DistanceToRewardAvailable) => #23
        #17, #23 -> SelectMany RunToReward
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Value.Z)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Accumulate => #3
            ExternalizedMapping(Value(DisplayName=DistanceToRewardAvailable)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=TaskLogic_RewardAvailable)
            -> MulticastSubject SoftwareEvent
            -> WorkflowOutput

            SubscribeSubject CurrentPosition
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Z)
            -> PropertyMapping(StartPosition)
            -> AindVrForagingDataSchema.TaskLogic.VirtualSite(Id=0, Length=20, StartPosition=0)
            -> MulticastSubject ActiveSite
        -> SelectMany Reward
            SubscribeSubject IsOperantMode
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> SelectMany WaitForLick
                SubscribeSubject LickEvent
                -> Take(Count=1)
                -> WorkflowOutput
            -> Unit => #4
            SubscribeSubject IsOperantMode
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit => #8
            #4, #8 -> Merge => #9
            SubscribeSubject PatchRewardAmount => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            SubscribeSubject PatchRewardProbability
            -> PropertyMapping(Value) => #14
            #12, #14 -> SelectMany DetermineReward
                SubscribeSubject RngSeed
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                ExternalizedMapping(Value) => #3
                #2, #3 -> GreaterThan(Operand=DoubleProperty(Value=0)) => #4
                WorkflowInput Source1 => #5
                #4, #5 -> Zip => #6
                -> Condition DrawReward
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item2) => #8
                SubscribeSubject PatchRewardAvailable => #9
                #8, #9 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform CapRewardAvailable
                  Expression: Item1 > Item2 ? Item2 : Item1
                -> InputMapping(Value(Selector=it))
                -> BonVision.OptionalFloatProperty(Value=0.5, HasValue=true) => #13
                #6 -> Condition NoReward
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BonVision.OptionalFloatProperty(Value=nil, HasValue=false) => #15
                #13, #15 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject GiveReward
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=TaskLogic_RewardDelivery)
            -> MulticastSubject SoftwareEvent
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject CurrentPosition
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Z)
            -> PropertyMapping(StartPosition)
            -> AindVrForagingDataSchema.TaskLogic.VirtualSite(Id=0, Length=20, StartPosition=0)
            -> MulticastSubject ActiveSite
        -> Repeat
    SubscribeSubject TaskLogicParameters
    -> Take(Count=1)
    -> MemberSelector(Selector=TaskModeSettings)
    -> AindVrForagingDataSchema.TaskLogic.MatchTaskModeSettings(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.HabituationSettings>)
    -> Take(Count=1) => #15
    #10, #15 -> SubscribeWhen
SubscribeSubject EndExperiment => #26
#25, #26 -> TakeUntil => #27
SubscribeSubject StartExperiment => #28
#27, #28 -> SubscribeWhen

Disable GroupWorkflow DebugTools
    GroupWorkflow RenderStateQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=InterPatchSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label) => #8
        -> Equal(Operand=StringProperty(Value=GapSite)) => #9
        #8 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #10
        #9, #10 -> Zip
        -> BitwiseOr
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=RewardSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
          Expression: it ? 255 : 0
        #6, #13, #17 -> Zip
        -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #19
        #2, #19 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=0.9
          LocationY=0.9
          Layer=100
          Angle=0
          ColorR=0
          ColorG=255
          ColorB=0
          ColorA=1
        -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    SubscribeSubject TriggeredCamerasReady => #2
    #0, #1, #2 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #6
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #7
    #6, #7 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

GroupWorkflow ControlUserInterface
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    GroupWorkflow AindManipulator
        Bonsai.Gui.ButtonBuilder Stop(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 48pt, style=Bold, Underline", Text=STOP!)
        -> Sink StopMotors
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject StopMotors
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #2
        GroupWorkflow OffsetPositionUI
            SubscribeSubject IsHomed
            -> BehaviorSubject EnableMotorUiControl

            SubscribeSubject StartExperiment
            -> BooleanProperty(Value=false)
            -> MulticastSubject EnableMotorUiControl

            Bonsai.Gui.PropertyGridBuilder ManipulatorOffsetProperty(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 22pt", HelpVisible=false, ToolbarVisible=true, AutoRefresh=false)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #6
            SubscribeSubject EnableMotorUiControl
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder Lock(Enabled=true, Visible=true, Text=Lock)
            -> Sink Lock
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject EnableMotorUiControl
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #11
            SubscribeSubject EnableMotorUiControl
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder Unlock(Enabled=false, Visible=true, Text=Unlock)
            -> Sink
                WorkflowInput Source1
                -> BooleanProperty(Value=true)
                -> MulticastSubject EnableMotorUiControl
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #17
            #11, #17 -> Bonsai.Gui.TableLayoutPanelBuilder LockUnlock(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 36pt", ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #19
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y2))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder -X(Enabled=true, Visible=true, Text=-X)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=-1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #24
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y2))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder +X(Enabled=true, Visible=true, Text=+X)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #29
            #24, #29 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #31
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder -Y1(Enabled=true, Visible=true, Text=-Y1)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=-1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #36
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder +Y1(Enabled=true, Visible=true, Text=+Y1)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #41
            #36, #41 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #43
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder -Y2(Enabled=true, Visible=true, Text=-Y2)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=-1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #48
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Y1))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder +Y2(Enabled=true, Visible=true, Text=+Y2)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #53
            #48, #53 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #55
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Z))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder -Z(Enabled=true, Visible=true, Text=-Z)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=-1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #60
            GroupWorkflow HasAxis
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                SubscribeSubject Settings
                -> MemberSelector(Selector=AxisConfiguration)
                -> Merge
                -> MemberSelector(Selector=Axis) => #5
                ExternalizedMapping(Value) => #6
                #5, #6 -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=Z))
                -> Condition => #8
                    WorkflowInput Source1
                    -> WorkflowOutput
                #1, #8 -> Concat
                -> WorkflowOutput
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder +Z(Enabled=true, Visible=true, Text=+Z)
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #65
            #60, #65 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #67
            SubscribeSubject EnableMotorUiControl
            -> PropertyMapping(Enabled) => #69
            #31, #43, #55, #67, #69 -> Bonsai.Gui.TableLayoutPanelBuilder ManipulatorOffsetButton(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 36pt", ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #71
            #6, #19, #71 -> Bonsai.Gui.TableLayoutPanelBuilder ManipulatorOffset
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=3
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.25), RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.65))
              CellSpans=""
            -> WorkflowOutput

            ExternalizedMapping(Value(DisplayName=X))
            -> IntProperty(Value=1000) => #75
            ExternalizedMapping(Value(DisplayName=Y1))
            -> IntProperty(Value=1000) => #77
            ExternalizedMapping(Value(DisplayName=Y2))
            -> IntProperty(Value=1000) => #79
            ExternalizedMapping(Value(DisplayName=Z))
            -> IntProperty(Value=1000) => #81
            #75, #77, #79, #81 -> CombineLatest
            -> InputMapping(X(Selector=Item1), Y1(Selector=Item2), Y2(Selector=Item3), Z(Selector=Item4))
            -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=1000, Y1=1000, Y2=1000, Z=1000)
            -> BehaviorSubject OffsetGain
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #4
        GroupWorkflow PositionControl
            SubscribeSubject Homing
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it ? "Homing..." : "Home"
            -> PropertyMapping(Name) => #2
            SubscribeSubject Homing
            -> BitwiseNot
            -> PropertyMapping(Enabled) => #5
            #2, #5 -> Bonsai.Gui.ButtonBuilder Home(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 36pt", Text=Home)
            -> Sink Home
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject HomeMotors
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #8
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> BooleanProperty(Value=true)
            -> Condition
                SubscribeSubject IsMoving
                -> WorkflowOutput
            -> PropertyMapping(AutoRefresh) => #12
            SubscribeSubject IsMoving
            -> BitwiseNot
            -> PropertyMapping(Enabled) => #15
            #12, #15 -> Bonsai.Gui.PropertyGridBuilder CurrentPosition(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 22pt", HelpVisible=false, ToolbarVisible=true, AutoRefresh=true)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #17
            SubscribeSubject EnableMotorUiControl
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder SetPosition(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 36pt", Text="Set position")
            -> BehaviorSubject SetPosition
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #22
            SubscribeSubject IsMoving
            -> Bonsai.Scripting.Expressions.ExpressionTransform GenerateLabel
              Expression: it ? "Moving..." : "Idle"
            -> PropertyMapping(Text)
            -> Bonsai.Gui.ButtonBuilder IsMoving(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 36pt", Text=Idle)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #27
            #8, #17, #22, #27 -> Bonsai.Gui.TableLayoutPanelBuilder PositionControl(Enabled=true, Visible=true, ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput

            SubscribeSubject SetPosition => #30
            ExternalizedMapping(X(Category=SetPosition), Y1(Category=SetPosition), Y2(Category=SetPosition), Z(Category=SetPosition)) => #31
            SubscribeSubject ManipulatorPosition
            -> DistinctUntilChanged
            -> PropertyMapping(X(Selector=X), Y1(Selector=Y1), Y2(Selector=Y2), Z(Selector=Z)) => #34
            #30, #31, #34 -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0)
            -> MulticastSubject MoveTo
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #6
        #2, #4, #6 -> Bonsai.Gui.TableLayoutPanelBuilder ManipulatorInterface
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.2), RowStyle(SizeType=Percent, Height=0.8))
          CellSpans(CellSpan(ColumnSpan=2, RowSpan=1))
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
    GroupWorkflow LauncherControl
        IncludeWorkflow(Path=Extensions\Annotation.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
        -> PublishSubject StartExperimentToggleButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
        -> PublishSubject EndExperimentButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #10
        #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
          Enabled=true
          Visible=true
          Font="Microsoft Sans Serif, 26pt"
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject StartExperimentToggleButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject StartExperimentShortcut

        SubscribeSubject EndExperimentButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject EndExperiment => #20
        SubscribeSubject StartExperiment => #21
        #20, #21 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #7
    GroupWorkflow ValveGui
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
        Bonsai.Gui.ButtonBuilder RunCalibration(Enabled=true, Visible=true, Text=RunCalibration)
        -> PublishSubject RunCalibration
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        BooleanProperty(Value=false)
        -> Take(Count=1) => #6
        SubscribeSubject ValveFlushState => #7
        #6, #7 -> Concat => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Close Valves") => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Open Valves") => #13
        #10, #13 -> Merge
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder FlushValves(Enabled=true, Visible=true, Text="Open Valves", Checked=false)
        -> MulticastSubject ValveFlushState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #20
        #1, #4, #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder ValveCalibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject RunCalibration
        -> Take(Count=1) => #24
        ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #25
        #24, #25 -> SelectMany LoopValve
            ExternalizedMapping(DueTime(DisplayName=Interval))
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
            ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
            #1, #2 -> IntProperty(Value=100)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve => #6
            ExternalizedMapping(Count(DisplayName=Repeats)) => #7
            #6, #7 -> RepeatCount(Count=200) => #8
            Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #9
            #8, #9 -> TakeUntil
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> WorkflowOutput
        -> Repeat

        BehaviorSubject<System.Boolean> ValveFlushState
        -> CreateObservable Flush
            WorkflowInput Source1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=200)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve
            -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
            -> RepeatCount(Count=20)
            -> LastOrDefault
            -> WorkflowOutput
        -> Switch
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #9
    GroupWorkflow HwShortcuts
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerAudio(Enabled=true, Visible=true, Text=TriggerAudio)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject AudioTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> PublishSubject ForceReward
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        #4, #7 -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=5, RowCount=5, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

        SubscribeSubject ForceReward => #10
        Annotation DefaultRewardAmount(Text="")
        -> FloatProperty(Value=3)
        -> Take(Count=1) => #13
        SubscribeSubject PatchRewardAmount => #14
        #13, #14 -> Merge => #15
        #10, #15 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GiveReward
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    GroupWorkflow OperationControl
        SubscribeSubject LickometerTriggerThreshold => #0
        SubscribeSubject LickometerUntriggerThreshold => #1
        #0, #1 -> CombineLatest
        -> Format(Format="TriggeredThr: {0} ; UntriggeredThr: {1}", Selector="Item1,Item2")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #4
        Bonsai.Gui.ButtonBuilder +Trigger(Enabled=true, Visible=true, Text=+Trigger)
        -> Sink WriteTrigger
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true) => #2
            ExternalizedMapping(Name) => #3
            #2, #3 -> MulticastSubject IncrementLickometerTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        Bonsai.Gui.ButtonBuilder -Trigger(Enabled=true, Visible=true, Text=-Trigger)
        -> Sink WriteTrigger
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false) => #2
            ExternalizedMapping(Name) => #3
            #2, #3 -> MulticastSubject IncrementLickometerTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #10
        Bonsai.Gui.ButtonBuilder +Untrigger(Enabled=true, Visible=true, Text=+Untrigger)
        -> Sink WriteTrigger
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=true) => #2
            ExternalizedMapping(Name) => #3
            #2, #3 -> MulticastSubject IncrementLickometerUntrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #13
        Bonsai.Gui.ButtonBuilder -Untrigger(Enabled=true, Visible=true, Text=-Untrigger)
        -> Sink WriteTrigger
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> BooleanProperty(Value=false) => #2
            ExternalizedMapping(Name) => #3
            #2, #3 -> MulticastSubject IncrementLickometerUntrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #16
        #7, #10, #13, #16 -> Bonsai.Gui.TableLayoutPanelBuilder LickometerControl(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #18
        #4, #18 -> Bonsai.Gui.TableLayoutPanelBuilder LickometerUI
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.3), RowStyle(SizeType=Percent, Height=0.7))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #13
    SubscribeSubject SubjectSchema
    -> Format(Format="Animal {0} @ Task {1}", Selector="Subject,Experiment")
    -> PropertyMapping(Name) => #16
    #5, #7, #9, #11, #13, #16 -> Bonsai.Gui.TabControlBuilder "Animal test @ Task AindVrForaging"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
    -> WorkflowOutput

    SubscribeSubject StartExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

    Annotation Deprecating(Text="")
    -> GroupWorkflow Shortcuts
        Bonsai.Shaders.Input.KeyDown(Key=Keypad7, Modifiers=Control)
        -> BooleanProperty(Value=true) => #1
        Bonsai.Shaders.Input.KeyDown(Key=Keypad8, Modifiers=Control)
        -> BooleanProperty(Value=false) => #3
        #1, #3 -> Merge
        -> MulticastSubject SpoutAvailable

        Bonsai.Shaders.Input.KeyDown(Key=KeypadSubtract, Modifiers=Control)
        -> Unit
        -> MulticastSubject EndExperiment

GroupWorkflow TaskVisualizer
    SubscribeSubject TriggeredCamerasStream
    -> Take(Count=1)
    -> Merge
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #4
    SubscribeSubject TriggeredCamerasStream
    -> Skip(Count=1)
    -> Take(Count=1)
    -> Merge
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #10
    SubscribeSubject MonitoringCamerasStream
    -> Take(Count=1)
    -> Merge
    -> MemberSelector(Selector=Value)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #15
    #4, #10, #15 -> Bonsai.Gui.TableLayoutPanelBuilder CameraVisualizer(Enabled=false, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #17
    SubscribeSubject QCDiagnosis
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #19
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: TimeSpan.FromSeconds(it)
    SubscribeSubject StartExperiment => #24
    #23, #24 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #26
    SubscribeSubject LickometerState
    -> InputMapping(X(Selector=Item2.Seconds), Y(Selector=Item2.Value.value__))
    -> Bonsai.Vision.CreatePoint2f(X=173744.688, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(IndexSelector="", ValueSelector="", SymbolType=Circle, LineWidth=1, CurveSettings="", Capacity=30, XMin=nil, XMax=nil, YMin=-1, YMax=2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.LineGraphVisualizer>) => #31
    SubscribeSubject CurrentVelocity
    -> Bonsai.Shaders.SampleOnRenderFrame => #33
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.PositionControl.VelocityThreshold) => #35
    #33, #35 -> CombineLatest
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector="Item1,Item2", SymbolType=None, LineWidth=2, CurveSettings="", Capacity=2000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #38
    GroupWorkflow ForagingStage => #39
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=InterPatch, Value=1) => #0
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=InterSite, Value=2) => #1
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=RewardSite, Value=3) => #2
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=PostPatch, Value=1) => #3
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Label=Unspecified, Value=-1) => #4
        #0, #1, #2, #3, #4 -> Merge
        -> WorkflowOutput
    -> Skip(Count=1) => #40
    #40, #39 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
      Expression: new(Item1 as Present, Item2 as Past)
    -> MemberSelector(Selector="Past.Item1,Present.Item2") => #43
    #42 -> MemberSelector(Selector=Present) => #44
    #43, #44 -> Merge
    -> InputMapping(X(Selector=Item2.StartPosition), Y(Selector=Item1))
    -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Diamond, LineWidth=3, CurveSettings="", Capacity=30, XMin=nil, XMax=nil, YMin=-1, YMax=4)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.LineGraphVisualizer>) => #49
    SubscribeSubject ActivePatch
    -> MemberSelector(Selector=StateIndex) => #51
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Value)
    -> MemberSelector(Selector=Z) => #54
    #51, #54 -> WithLatestFrom
    -> InputMapping(X(Selector=Item2), Y(Selector=Item1))
    -> Bonsai.Vision.CreatePoint2f(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Triangle, LineWidth=3, CurveSettings="", Capacity=6, XMin=nil, XMax=nil, YMin=-1, YMax=2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.LineGraphVisualizer>) => #59
    SubscribeSubject ThermistorData
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, CurveSettings="", Capacity=2000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #62
    SubscribeSubject SoftwareEvent
    -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.SoftwareEventVisualizer>) => #64
    #19, #26, #31, #38, #49, #59, #62, #64 -> Bonsai.Gui.TableLayoutPanelBuilder DataVisualization
      Enabled=true
      Visible=true
      ColumnCount=4
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #66
    SubscribeSubject SubjectSchema
    -> Format(Format="Animal {0} @ Task {1}", Selector="Subject,Experiment")
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #71
    SubscribeSubject SubjectSchema
    -> Format(Format="Animal {0} @ Task {1}", Selector="Subject,Experiment")
    -> PropertyMapping(Name) => #74
    #17, #66, #71, #74 -> Bonsai.Gui.TableLayoutPanelBuilder DataVisualization(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

    GroupWorkflow QC
        SubscribeSubject HarpBehaviorHeartBeat => #0
        SubscribeSubject SessionAccumulatedReward => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector="Item1.Seconds,Item2")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as Heartbeat,
            Item2 as TotalReward)
        -> WorkflowOutput
    -> BehaviorSubject QCDiagnosis

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    AllenNeuralDynamics.HarpUtils.CreateOdorMix
      channel3AsCarrier=true
      PercentageChannel0=0
      PercentageChannel1=0
      PercentageChannel2=0
      PercentageChannel3=NaN
      Channel3AsCarrier=true
      TargetOdorFlow=100
      TotalFlow=1000
    -> Take(Count=1) => #1
    -> MemberSelector(Selector=ChannelsTargetFlow) => #2
    #1 -> MemberSelector(Selector=OdorValveState) => #3
    #2, #3 -> Merge
    -> MulticastSubject HarpOlfactometerCommands
    -> Last
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #11
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #15
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #17
    #15, #17 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #20
    #11, #20 -> AllenNeuralDynamics.Core.StartRobocopy(CreateLog=true, Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee", ProcessWindowStyle=Normal) => #21
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #24
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    SubscribeSubject StartExperiment => #25
    #24, #25 -> Zip => #26
    #21, #26 -> SubscribeWhen
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
